config:
  title: Aquarium Amplicon NGS Prep
  description: A workflow that preps yeast libraries for NGS using qPCR
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Devin Strickland, affiliation: University of Washington}]
  maintainer: {name: Devin Strickland, email: dvn.strcklnd@gmail.com}
  github: {user: dvnstrcklnd, repo: aq-amplicon-ngs-prep}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: DNAGel, category: Collection Models}
code_source:
needs "Tissue Culture Libs/CollectionDisplay"

class DNAGel

    include CollectionDisplay

    GENERIC_GEL = "50 mL Agarose Gel in Gel Box"
    AGAROSE = "Agarose Gel" # Sample type in unused lanes
    AGAROSE_ID = Sample.find_by_name(AGAROSE).id

    attr_reader :gel, :percentage, :agarose_type, :rows, :columns
    attr_accessor :operation_matrix, :ladders

    # Initializes a {DNAGel} for the given gel {Collection}.
    #
    # @requires gel is a {Collection}
    # @requires gel {Collection} has associations `:percentage` and `:type`
    # @param gel [Collection]
    def initialize(gel:)
        @gel = gel
        @percentage = gel.get("percentage")
        @agarose_type = gel.get("type")
        @columns = gel.object_type.columns
        @rows = gel.object_type.rows
        @operation_matrix = Array.new(rows) { Array.new(columns) }
        @ladders = []
    end

    # Adds ladder {Sample}s to the gel layout as represented by the {Collection}'s
    #   {Sample} matrix. Adds one of each {Sample} to each gel `row`.
    #
    # @todo Make it so that you can pass a parameter to also add ladders on the other
    #   side of the gel.
    # @param samples [Array<Sample>] the ladder Samples to be added
    def add_ladders(samples:)
        rows.times do |r|
            samples.each_with_index do |sample, c|
                gel.set(r, c, sample.id)
                ladders << sample
            end
        end
    end

    # Adds {Operation}s to the gel layout until it is filled and returns the remainder.
    #
    # @note Makes a new {Part} for each {Operation} that is added.
    # @note Adds the {Operation} to `operation_matrix` in the same `r, c` as the {Part}.
    # @param operations [Array<Operation>] {Operation}s to be added
    # @param output_handle [String] the name of the output {FieldValue}
    # @return [Array<Operation>] {Operation}s that didn't get added because there
    #   wasn't sufficient room in the collection
    def add_operations(operations:, output_handle:)
        empties = get_empty
        empties.each do |r, c|
            if operations.any?
                op = operations.shift
                op.output(output_handle).make_part(gel, r, c)
                operation_matrix[r][c] = op
            else
                gel.set(r, c, Collection::EMPTY)
            end
        end
        operations
    end

    # Uses {Collection#select} to find empty lanes that haven't already been assigned a
    #   sample or ladder.
    #
    # @return [Array<Array<Fixnum>>] empty lane indices in the form [[r1, c1], [r2, c2]]
    def get_empty
        gel.select { |x| x == Collection::EMPTY || x == AGAROSE_ID }
    end

    # The total number of lanes.
    #
    # @return [FixNum] `gel.rows` * `gel.columns`
    def size
        rows * columns
    end

    # The number of ladders being added to each row of the gel.
    #
    # @return [FixNum]
    def ladders_per_row
        ladders.length
    end

    # The number of lanes in each row of the gel that don't have ladders.
    #
    # @return [FixNum]
    def free_lanes_per_row
        columns - ladders_per_row
    end

    # Mark 'gel` {Collection} as deleted in the inventory
    #
    def mark_as_deleted
        gel.mark_as_deleted
    end

    # Tests whether 'gel` {Collection} is deleted in the inventory
    #
    def deleted?
        gel.deleted?
    end

    # Finds all the available {DNAGel::GENERIC_GEL} {Item}s in inventory.
    #
    # @return [ActiveRecord::Relation<Collection>]
    def self.gels_in_inventory
        ot = ObjectType.find_by_name(GENERIC_GEL)
        Collection.where(object_type_id: ot.id).reject { |gel| gel.deleted? }
    end

    # Finds all the available {DNAGel::GENERIC_GEL} {Item}s in inventory of the desired
    #   `:type` and `:percentage`.
    #
    # @param agarose_type [String]
    # @param percentage [String]
    # @return [ActiveRecord::Relation<Collection>]
    def self.matching_gels(agarose_type:, percentage:)
        DNAGel.gels_in_inventory.select do |gel|
            gel.get("type") == agarose_type &&
            gel.get("percentage") == percentage
        end
    end

    # Creates a display table mapping the input {Item}s to the {DNAGel}'s
    #   lanes.
    #
    # @param input_handle [String] the name of the input {FieldValue}
    # @return [Array<Array<String>>] the mapping formatted as a {Table}
    def sample_display(input_handle:)
        rcx_list = []
        operation_matrix.each_with_index do |row, outrow|
            row.each_with_index do |op, outcol|
                next unless op
                fv = op.input(input_handle)
                x = "#{fv.child_item_id}<br>#{alphanumeric(fv.row, fv.column)}"
                rcx_list << [outrow, outcol, x]
            end
        end
        highlight_alpha_rcx(gel, rcx_list)
    end

    # Creates a display table mapping the `ladders` to the {DNAGel}'s
    #   lanes.
    #
    # @return [Array<Array<String>>] the mapping formatted as a {Table}
    def ladder_display
        rcx_list = []
        ladders.each do |sample|
            gel.find(sample).each { |r, c| rcx_list << [r, c, sample.name] }
        end
        highlight_alpha_rcx(gel, rcx_list)
    end

    # Converts zero-indexed `row` and `column` to alphanumeric plate indices.
    #
    # @param row [FixNum]
    # @peram column [FixNum]
    def alphanumeric(row, column)
        alpha_r = ('A'..'H').to_a
        "#{alpha_r[row]}#{column + 1}"
    end

end

library: {name: PurificationHelper, category: Library Cloning}
code_source:
# SG
# code adapted from Cloning/Purify Gel Slice
# helper functions for purification of a fragment from either gel slice or liquid-based reactions (e.g., PCR, restriction)
#
# careful when editing! used by the following Protocols:
# Purify on Column
# Purify Gel Slice
# Purify High-Volume Gel
module PurificationHelper

    # TODO refactor density parameter name? (see qg_volumes and iso_volumes definitions)
    DENSITY1 = 1.0 / 3000.0
    DENSITY2 = 1.0 / 1000.0
    MAX_VOL = 750 # uL, max volume to load on 1.5 eppi
    TEMP_BLOCK = "H2" # whick block to use
    TEMP_BLOCK_T = 40 # C

    # common to both kits - appear separately in settings, but can be changed here for both
    SPIN_G=17 # g
    SPIN_TIME_MIN=1 # min
    ELUTION_TEMP_C=50 # degrees
    ELUTION_VOL=30 # uL
    ELUTION_TIME_MIN=5 # min
    FIRST_RINSE_VOL = 750 # uL
    SECOND_RINSE_VOL = 500 # uL
    LOAD_TIME = 1 # min

    # allowed kits and their settings
    QIAGEN_SETTINGS={"column" => "blue Qiagen column", "loadingBuffer"=> "Qiagen QG buffer", "washBuffer" => "Qiagen PE buffer", "elutionBuffer" => "Qiagen EB buffer", "elutionTemperature" => 50, "elutionVolume" => ELUTION_VOL, "spinG" => SPIN_G, "spinTime" => SPIN_TIME_MIN, "elutionTime" => ELUTION_TIME_MIN, "meltTime" => 10, "meltTemperature" => 50, "firstRinseVol" => FIRST_RINSE_VOL, "secondRinseVol" => SECOND_RINSE_VOL, "loadingTime" => LOAD_TIME}
    QIAGENPINK_SETTINGS={"column" => "pink Qiagen column", "loadingBuffer"=> "Qiagen QG buffer", "washBuffer" => "Qiagen PE buffer", "elutionBuffer" => "Qiagen EB buffer", "elutionTemperature" => 50, "elutionVolume" => ELUTION_VOL, "spinG" => SPIN_G, "spinTime" => SPIN_TIME_MIN, "elutionTime" => ELUTION_TIME_MIN, "meltTime" => 10, "meltTemperature" => 50, "firstRinseVol" => FIRST_RINSE_VOL, "secondRinseVol" => SECOND_RINSE_VOL, "loadingTime" => LOAD_TIME}
    PROMEGA_SETTINGS={"column" => "Promega column", "loadingBuffer"=> "Membrane Binding Solution", "washBuffer" => "Membrane Wash Solution", "elutionBuffer" => "molecular grade water", "elutionTemperature" => 50, "elutionVolume" => ELUTION_VOL, "spinG" => SPIN_G, "spinTime" => SPIN_TIME_MIN, "elutionTime" => ELUTION_TIME_MIN, "meltTime" => 5, "meltTemperature" => 50, "firstRinseVol" => FIRST_RINSE_VOL, "secondRinseVol" => SECOND_RINSE_VOL, "loadingTime" => LOAD_TIME}
    KIT_SETTINGS={"Qiagen"=>QIAGEN_SETTINGS,"QiagenPink"=>QIAGENPINK_SETTINGS,"Promega"=>PROMEGA_SETTINGS}


    #---------------------------------------------------------------------
    # load sample on column
    # kitStr - string, name of kit. "Qiagen", Promega"
    #---------------------------------------------------------------------
    def findSettings(kitStr)
        kit=KIT_SETTINGS.fetch(kitStr)
        if(kit.nil?)
            show do
                title "Problem!"
                note "Purification kit #{kitStr} not recognized, exiting."
                return
            end
        end
        # return settings
        kit
    end # def

    #---------------------------------------------------------------------
    # heat elution buffer
    # ioStr - string, name of input item
    # kitStr - string, name of kit. "Qiagen", Promega"
    #---------------------------------------------------------------------
    def heatElutionBuffer(ioStr, kitStr)

        kit=findSettings(kitStr)

        tot_reactions = 0
        operations.each { |op|
            if(op.input(ioStr).object_type.name=="Multiple Gel Slices")
                tot_reactions = tot_reactions + op.input(ioStr).item.get(:number_of_tubes).to_f
            else
                tot_reactions = tot_reactions + 1
            end
        }

        show do
            title "Preheat elution buffer"
            # math: 1.5 so there is spare, 2 because we may split into 2 tubes
            check "Set temperature block #{TEMP_BLOCK} to #{kit.fetch("elutionTemperature")} C"
            check "In a 1.5 mL tube, heat #{1.5*2*tot_reactions*kit.fetch("elutionVolume")} µL of #{kit.fetch("elutionBuffer")} to #{kit.fetch("elutionTemperature")} C on temperature block #{TEMP_BLOCK}"
            note "The heated #{kit.fetch("elutionBuffer")} will be used in the final step of the purification"
        end

    end #def

    #---------------------------------------------------------------------
    # calculate volumes needed throughout protocol based on weight
    # CAREFUL! ioStr may refer to either parts (of stripwells), multiple gel slices, or non-part items
    # ioStr - string, name of input item
    # kitStr - string, name of kit. "Qiagen", Promega"
    #---------------------------------------------------------------------
    def volumeSetup(ioStr, kitStr)

        # for testing - assign a random weight value
        if(debug)
            operations.each { |op| op.temporary[:weight] = (Random.rand(0.25) + 0.1).to_s }
        end

        # if already have weights defined, assign them to temporary for use further on
        ops_with_weight=operations.select { |op| !(op.input(ioStr).item.get(:weight).nil?) }.each { |opw| opw.temporary[:weight]=opw.input(ioStr).item.get(:weight) }

        # get weights of samples if not already defined
        # Stripwell
        stripwell_ops=operations.select { |op| op.temporary[:weight].nil? && op.input(ioStr).object_type.name=="Stripwell" }
        if(stripwell_ops.any?)
            show do
                title "Enter volume(s) of stripwell wells"
                note "Enter the volumes of the wells:"
                table stripwell_ops.start_table
                    .input_item(ioStr) # may be a collection id
                    .custom_column(heading: "well") { |op| op.input(ioStr).column + 1 } # well within collection
                    .get(:weight, type: 'number', heading: "Volume (µL)", default: 50.0)
                    .end_table
            end
            stripwell_ops.each { |op|
                op.temporary[:weight] = "#{(op.temporary[:weight].to_f)/1000.0}"
            }
        end
        # Multiple Gel Slice
        multiple_ops=operations.select { |op| op.temporary[:weight].nil? && op.input(ioStr).object_type.name=="Multiple Gel Slices" }
        if(multiple_ops.any?)
            show do
                title "Weigh volume(s) of 'multiple gel' items"
                note "Weigh the tubes and and enter the maximum weight of the following samples:"
                table multiple_ops.start_table
                    .input_item(ioStr)
                    .custom_column(heading: "number of tubes") { |op| op.input(ioStr).item.get(:number_of_tubes) }
                    .get(:weight, type: 'number', heading: "MAXIMAL weight over ALL tubes (g)", default: 0.001)
                    .end_table
                note "Write the MAXIMAL weight for each 'multiple gel' item on tube labeled <b>1</b>"
            end
        end
        # non-collection, non-multiple items
        other_ops=operations.select { |op| op.temporary[:weight].nil? && !(op.input(ioStr).object_type.name=="Stripwell") && !(op.input(ioStr).object_type.name=="Multiple Gel Slices") }
        if(other_ops.any?)
            show do
                title "Weigh volume(s) of non-stripwell items"
                note "Weigh the tubes and and enter the volume of the following samples:"
                table other_ops.start_table
                    .input_item(ioStr) # may be a collection id
                    .get(:weight, type: 'number', heading: "Weight (g)", default: 0)
                    .end_table
                note "Write the tube weight on the side of each tube"
            end
        end

        # calculate volumes of buffers
        kit=findSettings(kitStr) # test for bad string
        if(kitStr=="Qiagen" || kitStr=='QiagenPink')
            operations.each do |op|
                op.temporary[:qg_volume]  = (op.temporary[:weight].to_f / DENSITY1).floor
                if add_isopropanol?(op, ioStr)
                    op.temporary[:iso_volume] =  (op.temporary[:weight].to_f / DENSITY2).floor
                else
                    op.temporary[:iso_volume] = 0
                end
                op.temporary[:total_volume] = op.temporary[:qg_volume] + op.temporary[:iso_volume]
            end
        elsif(kitStr=="Promega")
            operations.each do |op|
                op.temporary[:qg_volume]  = (1000*(op.temporary[:weight].to_f)).ceil
                op.temporary[:iso_volume] = 0 # isopropanol volume == 0 for Promega kit
                op.temporary[:total_volume] = op.temporary[:qg_volume]
            end
        end

        # these will need to be split
        operations.each do |op|
            op.temporary[:is_divided] = (op.temporary[:total_volume] >= 2000)
        end

    end # def

    def add_isopropanol?(op, ioStr)
        length = op.input(ioStr).sample.properties["Length"]
        return true unless length.is_a?(Numeric)
        length <= 500 || length >= 4000
    end

    #---------------------------------------------------------------------
    # add loading buffer
    # transfer gel slices to larger tubes if needed
    # ioStr - string, name of input item
    # kitStr - string, name of kit. "Qiagen", Promega"
    #---------------------------------------------------------------------
    def addLoadingBuffer(ioStr, kitStr)

        kit=findSettings(kitStr)

        # gel items are non-stripwell
        show do
            title "Move gel slices to new tubes"
            note "Carefully transfer the gel slices in the following tubes each to a new 2.0 mL tube using a pipette tip:"
            table operations.select{|op| op.temporary[:total_volume].between?(1500, 2000)}.start_table
                .input_item(ioStr)
                .end_table
            note "Label the new tubes accordingly, and discard the old 1.5 mL tubes."
        end if operations.any? {|op| op.temporary[:total_volume].between?(1500, 2000)}

        # stripwell items
        show do
            title "Add the following volume of #{kit.fetch("loadingBuffer")} to the corresponding well:"
            table operations.start_table
                .input_item(ioStr)
                .custom_column(heading: "well") { |op| op.input(ioStr).column + 1 } # well within collection
                .custom_column(heading: "#{kit.fetch("loadingBuffer")} Volume (µL)", checkable: true) { |op| op.temporary[:qg_volume]}
                .end_table
        end if operations.any? { |op| (op.input(ioStr).object_type.name=="Stripwell") }

        # multiple gel slice items
        show do
            title "Add the following volume of #{kit.fetch("loadingBuffer")} to each of the listed tubes:"
            table operations.start_table
                .input_item(ioStr)
                .custom_column(heading: "add to EACH of these tubes", checkable: true) { |op| "1-#{op.input(ioStr).item.get(:number_of_tubes)}"}
                .custom_column(heading: "#{kit.fetch("loadingBuffer")} Volume (µL)", checkable: true) { |op| op.temporary[:qg_volume]}
                .end_table
        end if operations.any? { |op| (op.input(ioStr).object_type.name=="Multiple Gel Slices") }

        # non-stripwell, non-multiple gel slice items

        # non-stripwell items
        show do
            title "Add the following volume of #{kit.fetch("loadingBuffer")} to the corresponding tube:"
            table operations.start_table
                .input_item(ioStr)
                .custom_column(heading: "#{kit.fetch("loadingBuffer")} Volume (µL)", checkable: true) { |op| op.temporary[:qg_volume]}
                .end_table
        end if operations.any? { |op| !(op.input(ioStr).object_type.name=="Stripwell") && !(op.input(ioStr).object_type.name=="Multiple Gel Slices") }

    end # def

    #---------------------------------------------------------------------
    # melt gel
    # ioStr - string, name of input item
    # kitStr - string, name of kit. "Qiagen", Promega"
    #---------------------------------------------------------------------
    def meltGel(ioStr, kitStr)

        kit=findSettings(kitStr)

        show do
            title "Place all tubes in #{kit.fetch("meltTemperature")} C heat block"
            timer initial: { hours: 0, minutes: kit.fetch("meltTime") , seconds: 0}
            note "Vortex every few minutes to speed up the process"
            note "Retrieve after 5 minutes or when the gel slice is competely dissovled"
        end

        show do
            title "Equally distribute melted gel slices between tubes"
            note "Equally distribute the volume of the following tubes each between two 1.5 mL tubes:"
            table operations.select{ |op| op.temporary[:is_divided]}.start_table
                .input_item(ioStr)
                .end_table
            note "Label the new tubes accordingly, and discard the old 1.5 mL tubes"
        end if operations.any? { |op| op.temporary[:is_divided] }

        # isopropanol volume == 0 for Promega kit
        show do
            title "Add isopropanol"
            note "Add isopropanol according to the following table. Pipette up and down to mix."
            warning "Divide the isopropanol volume evenly between two 1.5 mL tubes #{operations.select{ |op| op.temporary[:is_divided]}.map{ |op| op.input("Gel").item.id}} since you divided one tube's volume into two earlier." if operations.any?{ |op| op.temporary[:is_divided]}
            table operations.select{ |op| op.temporary[:iso_volume] > 0 }.start_table
                .input_item(ioStr)
                .custom_column(heading: "Isopropanol (µL)", checkable: true) { |op| op.temporary[:iso_volume]}
                .end_table
        end if operations.any? { |op| op.temporary[:iso_volume] > 0}

    end # def

    #---------------------------------------------------------------------
    # load sample on column
    # ioStr - string, name of input item
    # kitStr - string, name of kit. "Qiagen", Promega"
    #---------------------------------------------------------------------
    def loadSample(ioStr,kitStr)

        kit=findSettings(kitStr)
    
        # load stripwell samples
        show do
            title "Load sample(s)"
            check "Grab <b>#{operations.length}</b> #{kit.fetch("column")}(s), label with 1 to #{operations.length} on the sides of the column and the collection tube."
            check "Be sure not to add more than #{MAX_VOL} µL to each #{kit.fetch("column")}"
            warning "Vortex contents of 1.5 mL tube(s) thoroughly before adding to #{kit.fetch("column")}(s)!".upcase
            check "Add tube contents to LABELED #{kit.fetch("column")}(s) using the following table:"
            table operations.start_table
                .input_item(ioStr)
                .custom_column(heading: "well") { |op| op.input(ioStr).column + 1 } # well within collection
                .custom_column(heading: kit.fetch("column") ) { |op| operations.index(op) + 1 } # column index
                .end_table
            check "Wait for #{kit.fetch("loadingTime")} min before proceeding"
            timer initial: { hours: 0, minutes: kit.fetch("loadingTime"), seconds: 0}
        end if operations.any? { |op| (op.input(ioStr).object_type.name=="Stripwell") }

        # load non-stripwell samples
        show do
            title "Load sample(s)"
            check "Grab <b>#{operations.length}</b> #{kit.fetch("column")}(s), label with 1 to #{operations.length} on the sides of the column and the collection tube."
            check "Be sure not to add more than #{MAX_VOL} µL to each #{kit.fetch("column")}"
            warning "Vortex contents of 1.5 mL tube(s) thoroughly before adding to #{kit.fetch("column")}(s)!".upcase
            check "Add tube contents to LABELED #{kit.fetch("column")}(s) using the following table:"
            table operations.start_table
                .input_item(ioStr)
                .custom_column(heading: kit.fetch("column") ) { |op| operations.index(op) + 1 } # column index
                .end_table
            check "Wait for #{kit.fetch("loadingTime")} min before proceeding"
            timer initial: { hours: 0, minutes: kit.fetch("loadingTime"), seconds: 0}
        end if operations.any? { |op| !(op.input(ioStr).object_type.name=="Stripwell") }

        show do
            title "Centrifuge sample(s)"
            check "Spin at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min to bind DNA to column(s)"
            check "Empty collection column(s) by pouring liquid waste into liquid waste container"
            warning "Add any remaining contents of the 1.5 mL tube(s) to their corresponding columns, and repeat the load and centrifugation steps for all tubes with remaining mixture!"
        end

    end # def

    #---------------------------------------------------------------------
    # load multiple gel slice sample on columns
    # ioStr - string, name of input item
    # kitStr - string, name of kit. "Qiagen", Promega"
    # note: ASSUME THAT THERE IS NO BATCHING!!!
    #---------------------------------------------------------------------
    def loadMultiGelSample(ioStr,kitStr)

        kit=findSettings(kitStr)

        operations.each { |op|

            num_columns=(op.input(ioStr).item.get(:number_of_tubes).to_f/2.0).ceil
            # build display table
            col1=Array (1..op.input(ioStr).item.get(:number_of_tubes).to_f)
            col2=col1.map {|v| (v/2.0).ceil }
            col1=col1.unshift("Input tube index")
            col2=col2.unshift("Output column index")
            tab = [col1, col2].transpose

            show do
                title "Load sample(s)"
                check "Grab <b>#{num_columns}</b> #{kit.fetch("column")}(s), label them 1 to #{num_columns}"
                note "You are loading the contents of two input tubes on each column, this may require <b>MULTIPLE ROUNDS</b> of loading"
                note "Be sure not to add more than #{MAX_VOL} µL to each #{kit.fetch("column")}"
                check "Vortex tube(s), then transfer the contents of the tube(s) to the #{kit.fetch("column")}(s) using the following table:"
                table tab
                check "Wait <b>1 min</b>"
                check "Spin at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min to bind DNA to column(s)"
                check "Empty collection column(s) by pouring liquid waste into liquid waste container"
                warning "Add any remaining contents of the 1.5 mL tube(s) to their corresponding columns, and repeat the vortex, load, wait,  and centrifugation steps"
            end
        }
    end # def

    #---------------------------------------------------------------------
    # wash step
    # kitStr - string, name of kit. "Qiagen", Promega"
    #---------------------------------------------------------------------
    def washSample(kitStr)

        kit=findSettings(kitStr)

        show do
          title "Wash sample(s)"

          if kitStr=="Qiagen" || kitStr=="QiagenPink"
            check "Add #{kit.fetch("secondRinseVol")} µL #{kit.fetch("loadingBuffer")} to columns"
            check "Spin at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min to wash column(s)"
            check "Empty collection tube(s)"
          end

          check "Add #{kit.fetch("firstRinseVol")} µL #{kit.fetch("washBuffer")} to columns"
          check "Spin at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min to wash column(s)"
          check "Empty collection tube(s)"

          check "Add #{kit.fetch("secondRinseVol")} µL #{kit.fetch("washBuffer")} to columns"
          check "Spin at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min to wash column(s)"
          check "Empty collection tube(s)"

          check "Spin at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min to remove all buffer from column(s)"
        end
    end # def

       #---------------------------------------------------------------------
    # elution step - multiple gel slice version
    # ioStr1 - string, name of output item for 1st elution
    # ioStr2 - string, name of output item for 2nd elution
    # kitStr - string, name of kit. "Qiagen", Promega"
    #---------------------------------------------------------------------
    def eluteMultipleGelSample(inStr,outStr1,outStr2,kitStr)

        kit=findSettings(kitStr)

        operations.each { |op|

            num_columns=(op.input(inStr).item.get(:number_of_tubes).to_f/2.0).ceil

            # # build display table
            # col1=Array (1..op.input(inStr).item.get(:number_of_tubes).to_f)
            # col2=col1.map {|v| (v/2.0).ceil }
            # col1=col1.unshift("Input tube index")
            # col2=col2.unshift("Output column index")
            # tab = [col1, col2].transpose


            # incubation+elution- first round
            show do
                title "Elution - first round"
                check "Grab #{num_columns} sterile 1.5 mL tubes and label <b>ALL</b> of them <b>1</b>"
                check "Transfer the #{kit.fetch("column")} columns from the collection tubes to the 1.5 mL tubes labeled <b>1</b>"
                check "Add <b>#{kit.fetch("elutionVolume")} µL</b> of <b>PREHEATED</b> molecular grade water to center of each column"
                warning "Be careful to not pipette on the wall of the tube"
                timer initial: {hours: 0, minutes: kit.fetch("elutionTime"), seconds: 0}
                check "Spin for #{kit.fetch("spinTime")} minute(s) at at #{kit.fetch("spinG")} xg to elute DNA"
                warning "Retain the columns for a second elution!"
            end

            # incubation+elution - second round
            show do
                title "Elution - second round"
                check "Grab #{num_columns} sterile 1.5 mL tubes and label <b>ALL</b> of them <b>2</b>"
                check "Transfer the columns from the tubes labeled <b>1</b> to the tubes labeled <b>2</b>"
                check "Add <b>#{kit.fetch("elutionVolume")} µL</b> of <b>PREHEATED</b> molecular grade water to center of each column"
                warning "Be careful to not pipette on the wall of the tube"
                timer initial: {hours: 0, minutes: kit.fetch("elutionTime"), seconds: 0}
                check "Spin for #{kit.fetch("spinTime")} minute(s) at at #{kit.fetch("spinG")} xg to elute DNA"
                check "Remove and trash the columns"
            end

            # combine tubes with high, low cencentration samples
            show do
                title "Combine samples"
                check "Combine the contents of the tubes labeled <b>1</b> into one 1.5 mL tube (add one to the other) and label it <b>#{op.output(outStr1).item}</b>"
                check "Combine the contents of the tubes labeled <b>2</b> into one 1.5 mL tube (add one to the other) and label it <b>#{op.output(outStr2).item}</b>"
                check "Trash the empty used tubes"
            end

        } # each

    end # def

    #---------------------------------------------------------------------
    # elution step
    # ioStr - string, name of output item
    # kitStr - string, name of kit. "Qiagen", Promega"
    # doTwice - repeat elution using flowthrough if ==1, else only 1 elution round
    #---------------------------------------------------------------------
    def eluteSample(ioStr,kitStr,doTwice=1)

        kit=findSettings(kitStr)

        show do
            title "Elution"
            check "Apply the printed labels to clean 1.5 mL tubes"
            check "Transfer the #{kit.fetch("column")}s to the labeled 1.5 mL tubes using the following table:"
            table operations.start_table
                .custom_column(heading: kit.fetch("column")) { |op| operations.index(op) + 1 }
                .output_item(ioStr, heading: "1.5 mL tube", checkable: true)
            .end_table
            check "Add #{kit.fetch("elutionVolume")} µL of <b>PREHEATED</b> #{kit.fetch("elutionBuffer")} to center of the column"
            warning "Be careful not to pipette on the wall of the tube"
            warning "Be careful not to touch the column with the tip"
            check "Set a timer for #{kit.fetch("elutionTime")} min. When it finishes, proceed to the next step."
            timer initial: { hours: 0, minutes: kit.fetch("elutionTime") , seconds: 0}
            if(doTwice==1)
                check "Elute DNA into 1.5 mL tubes by spinning at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min, <b>KEEP</b> the columns"
                check "Pipette the flow through (#{kit.fetch("elutionVolume")} µL) onto the center of the column, spin again at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min"
            else
                check "Elute DNA into 1.5 mL tubes by spinning at #{kit.fetch("spinG")} xg for #{kit.fetch("spinTime")} min"
            end
            check "Discard the columns"
            check "Set temperature block #{TEMP_BLOCK} back to #{TEMP_BLOCK_T} C"
        end
    end # def

    #---------------------------------------------------------------------
    # measure concentration of samples, if not already measured
    # inputs: ioStr - string, name of output item to which the concentration is associated
    #         inOut - "input" or "output", indicates whether ioStr refers to an input or output item
    #         ops - which ops to measure
    #---------------------------------------------------------------------
    def measureConcentration(ioStr,inOut,ops=operations)

        case inOut

        when "input"

            show do
                title "Measure concentration"
                note "Go to B9 and vortex and nanodrop the following 1.5 mL tube(s), and enter the DNA concentration(s):"
                table ops.start_table
                    .input_item(ioStr)
                    .get(:conc, type: 'number', heading: "Concentration (ng/uL)", default: 7)
                    .get(:note, type: 'text', heading: "Notes")
                    .end_table
            end if ops.any? { |op| op.input_data(ioStr, :concentration).nil? }
            ops.each do |op|
                op.set_input_data(ioStr, :concentration, op.temporary[:conc])
                op.input(ioStr).item.notes =  op.temporary[:note]
            end if ops.any? { |op| op.input_data(ioStr, :concentration).nil? }

        when "output"

            show do
                title "Measure concentration"
                note "Go to B9 and vortex and nanodrop the following 1.5 mL tube(s), and enter the DNA concentration(s):"
                table ops.start_table
                    .output_item(ioStr)
                    .get(:conc, type: 'number', heading: "Concentration (ng/µL)", default: 7)
                    .get(:note, type: 'text', heading: "Notes")
                    .end_table
            end if ops.any? { |op| op.output_data(ioStr, :concentration).nil? }
            ops.each do |op|
                op.set_output_data(ioStr, :concentration, op.temporary[:conc])
                op.output(ioStr).item.notes =  op.temporary[:note]
            end if ops.any? { |op| op.output_data(ioStr, :concentration).nil? }

        else
            show do
                title "Problem with inOut string #{inOut} in #{__method__.to_s}, exiting."
                return
            end
        end # case

    end # def

    #---------------------------------------------------------------------
    # save/discard samples based on concentration
    # inputs: ioStr - string, name of output item to which the concentration is associated
    #         ops - which operations to check
    # outputs:
    #---------------------------------------------------------------------
    def saveOrDiscard(ioStr,ops=operations)
        choices = {}

        choices = show do
            title "Decide whether to keep dilute stocks"
            note "The below stocks have a concentration of less than 10 ng/µL"
            note "Talk to a lab manager to decide whether or not to discard the following stocks"
            ops.select{ |op| op.output_data(ioStr, :concentration) < 10}.each do |op|
                select ["Yes", "No"], var: "d#{op.output(ioStr).item.id}", label: "Discard Fragment Stock #{op.output(ioStr).item}", default: 0
            end
        end if ops.any?{ |op| op.output_data(ioStr, :concentration) < 10}

        show do
          title "Discard fragment stocks"
          note "Discard the following fragment stocks:"
          note ops.select{ |op| choices["d#{op.output(ioStr).item.id}".to_sym] == "Yes"}
            .map{ |op| op.output(ioStr).item}
            .join(", ")
        end if choices.any? { |key, val| val == "Yes"}

        ops.select { |op| choices["d#{op.output(ioStr).item.id}".to_sym] == "Yes" }.each do |op|
            frag = op.output(ioStr).item
            op.error :low_concentration, "The concentration of #{frag} was too low to continue"
            frag.mark_as_deleted
        end
    end # def

    #---------------------------------------------------------------------
    # sort items (including stripwell subitems) for table display
    # algorithm: increasing in ascending numberical order of table_val, where table_val is defined as:
    # stripwell_id.colum_id (floating point)
    # inputs: op - operation
    #         ioStr - string, name of input/output used for sorting
    #         inOut - "input" or "output"
    #---------------------------------------------------------------------
    def sortOperations(ioStr,inOut)
        operations.sort! { |a, b| tableVal(a, ioStr, inOut) <=> tableVal(b, ioStr, inOut) }
    end
    #---------------------------------------------------------------------
    # calculates value of item (including stripwell subitems) for sort
    # algorithm: increasing in ascending numberical order of table_val, where table_val is defined as:
    # stripwell_id.colum_id (floating point)
    # inputs: op - operation
    #         ioStr - string, name of input/output used for sorting
    #         inOut - "input" or "output"
    #---------------------------------------------------------------------
    def tableVal(op, ioStr, inOut)
        val=0
        case inOut
        when "input"
            val=op.input(ioStr).item.id.to_f + op.input(ioStr).column.to_f/100.0
        when "output"
            val=op.output(ioStr).item.id.to_f + op.output(ioStr).column.to_f/100.0
        end
        # return
        val
    end

end # module

sample_types:
  - {name: DNA Library, description: A sample that contains a pool of DNA molecules with many unique sequences}
    - {name: Oligo Pool, ftype: sample, sample_types: [Oligo Pool]}
  - {name: Oligo Pool, description: Pool or library of ssDNA oligos. May contain one or more sublibraries. In array fields, the n-th position corresponds to n-th sublibrary. "forward priming site" and "reverse priming site" are read as primer sequences.}
    - {name: Manufacturer, ftype: string, required: true}
    - {name: Oligo Library ID, ftype: number, required: true}
    - {name: inner forward primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: inner reverse primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: sublibrary forward primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: sublibrary reverse primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: min length (nt) (array), ftype: number, array: true, required: true}
    - {name: max length (nt) (array), ftype: number, array: true, required: true}
    - {name: variants (array), ftype: number, array: true, required: true}
    - {name: sublibrary name (array), ftype: string, array: true, required: true}
    - {name: forward priming site (array), ftype: string, array: true, required: true}
    - {name: reverse priming site (array), ftype: string, array: true, required: true}
  - {name: Primer, description: A short double stranded piece of DNA for PCR and sequencing}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
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object_types:
  - {name: Plasmid Library, description: A special case of plasmid that contains many unique sequences, handler: sample_container, unit: DNA Library, release_method: return, prefix: M20, sample_type_name: DNA Library}
  - {name: Post-exonuclease, description: yeast DNA library sample after exonuclease step, before NGS library prep, handler: sample_container, unit: DNA Library, release_method: return, prefix: M20, sample_type_name: DNA Library}
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operation_type: Digest Genomic DNA
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Zymoprepped sample, sample_types: [DNA Library], object_types: [Plasmid Library]}
  - {ftype: sample, role: output, name: Exonucleased sample, sample_types: [DNA Library], object_types: [Post-exonuclease]}
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documentation:
Step 3 in preparation of yeast DNA library samples for NGS. 
Full flow is:
1. Store concentrated  sample in Zymoprep Solution 1, in -80
2. Zymoprep sample and clean
3. Exonuclease digestion and purification of sample
4. qPCR to amplify, clean up, using pETCON adapters 
5. qPCR to amplify and add illumina adapters

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cost_model:
def cost(op)
    {
        materials: 3.95,
        labor: 14.23
    }      
end

protocol:
# frozen_string_literal: true

# Sarah Goldberg
# Refactored by Devin Strickland

needs 'Next Gen Prep/NextGenPrepHelper'
needs 'Yeast Display/YeastDisplayHelper'
needs 'Standard Libs/AssociationManagement'
needs 'Standard Libs/Units'
needs 'Standard Libs/Debug'

class Protocol
  include AssociationManagement
  include Debug
  include NextGenPrepHelper
  include PartProvenance
  include Units
  include YeastDisplayHelper

  INPUT = 'Zymoprepped sample'
  OUTPUT = 'Exonucleased sample'

  BUFFER = 'Lambda Exonuclease Buffer'
  BUFFER_VOL = { qty: 4, units: MICROLITERS }.freeze

  EXO = 'Exonuclease I'
  EXO_VOL = { qty: 4, units: MICROLITERS }.freeze

  LAMBDA = 'Lambda Exonuclease'
  LAMBDA_VOL = { qty: 2, units: MICROLITERS }.freeze

  MAKE_EXTRA_REAGENT = 1.1

  INCUBATION_LOCATION = 'incubator'
  INCUBATION_TEMP = { qty: 30, units: DEGREES_C }.freeze
  INCUBATION_TIME = { qty: 90, units: MINUTES }.freeze

  INACTIVATION_LOCATION = 'dry block'
  INACTIVATION_TEMP = { qty: 80, units: DEGREES_C }.freeze
  INACTIVATION_TIME = { qty: 20, units: MINUTES }.freeze

  def main
    operations.sort_by! { |op| op.input(INPUT).item.id }

    operations.retrieve.make

    assign_tube_numbers(INPUT, OUTPUT)
    gather_enzymes_and_buffer
    set_up_reactions_and_run(operations)
    number_tubes_and_columns
    transfer_to_columns
    wash_samples(pb_washes = 0)
    elute_samples(OUTPUT)

    operations.each do |op|
      add_sample_provenance(
        input: op.input(INPUT).item,
        output: op.output(OUTPUT).item
      )
      unless op.input(INPUT).item.get(:bin).nil? # sorted sample
        op.output(OUTPUT).item.associate(:bin, op.input(INPUT).item.get(:bin))
      end
      op.input(INPUT).item.mark_as_deleted
    end

    operations.store

    {}
  end

  def gather_enzymes_and_buffer
    materials = [
      Sample.find_by_name(BUFFER).in('Enzyme Buffer Stock').first,
      Sample.find_by_name(LAMBDA).in('Enzyme Stock').first,
      Sample.find_by_name(EXO).in('Enzyme Stock').first
    ]

    show do
      title 'Grab an ice block'
      warning 'In the following step you will need to take enzymes out of ' \
              'the freezer. Make sure the enzymes are kept on ice for the ' \
              'duration of the protocol.'
    end

    take(materials, interactive: true, method: 'boxes')
  end

  def show_prepare_master_mix(volume_factor)
    show do
      title 'Prepare master mix'

      warning 'Keep exonucleases and Master Mix on cold block!'

      check "Label a #{MICROFUGE_TUBE} 'Master Mix'"
      check "Add <b>#{expanded_volume_display(BUFFER_VOL, volume_factor, 1)}</b> of #{BUFFER} to Master Mix"
      check "Add <b>#{expanded_volume_display(EXO_VOL, volume_factor, 1)}</b> of #{EXO} to Master Mix"
      check "Add <b>#{expanded_volume_display(LAMBDA_VOL, volume_factor, 1)}</b> of #{LAMBDA} to Master Mix"

      check 'Flick the tube gently to mix'
    end
  end

  def show_prepare_reactions(operations)
    mm_vol = BUFFER_VOL[:qty] + EXO_VOL[:qty] + LAMBDA_VOL[:qty]
    show do
      title 'Prepare exonuclease reactions'

      check 'Re-label tubes according to the table and then add ' \
            '10uL Master Mix according to the table.'

      table operations.start_table
                      .input_item(INPUT)
                      .custom_column(
                        heading: 'Tube number',
                        checkable: true
                      ) { |op| op.input(INPUT).item.associations[:tube_number] }
                      .custom_column(
                        heading: "Master Mix (#{BUFFER_VOL[:units]})",
                        checkable: true
                      ) { |_op| mm_vol }
                      .end_table

      check 'Briefly vortex and spin.'
    end
  end

  def set_up_reactions_and_run(operations)
    show_prepare_master_mix(operations.length * MAKE_EXTRA_REAGENT)
    show_prepare_reactions(operations)

    show do
      title "Incubate at #{qty_display(INCUBATION_TEMP)}"

      check "Place the tube in the #{qty_display(INCUBATION_TEMP)} " \
            "#{INCUBATION_LOCATION} for #{qty_display(INCUBATION_TIME)}"
      check "Bump a heat block up to #{qty_display(INACTIVATION_TEMP)} for the next step"
      note "Check with a manager about which heat block to set up"
    end

    show do
      title "Inactivate at #{qty_display(INACTIVATION_TEMP)}"

      check "Place the tube in the #{qty_display(INACTIVATION_TEMP)} " \
            "#{INACTIVATION_LOCATION} for #{qty_display(INACTIVATION_TIME)}"
    end
  end

  def transfer_to_columns
    show do
      title "Transfer to #{COLUMN}s"

      check 'When the inactivation is finished, retrieve the samples'
      note '<b>For each sample:</b>'
      check "Add #{qty_display(PB_VOL)} #{PB}"
      check 'Vortex and spin samples'
      check "Transfer the mixture to the #{COLUMN} with the same number"
    end
  end

  def add_sample_provenance(input:, output:)
    input_associations = AssociationMap.new(input)
    output_associations = AssociationMap.new(output)
    add_provenance(from: input, from_map: input_associations,
                   to: output, to_map: output_associations)
    input_associations.save
    output_associations.save
  end
end

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object_types:
  - {name: Illuminated Fragment Library, description: A special case of dsDNA fragment that contains many unique sequences and adapters for Illumina sequencing, handler: sample_container, unit: DNA Library, release_method: return, prefix: M20, sample_type_name: DNA Library}
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operation_type: Dilute to 4nM
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: DNA library in, sample_types: [DNA Library], object_types: [Illuminated Fragment Library], routing: L}
  - {ftype: sample, role: output, name: DNA library out, sample_types: [DNA Library], object_types: [Illuminated Fragment Library], routing: L}
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cost_model:
def cost(_op)
  { labor: 3.89, materials: 0.06 }
end

protocol:
# SG
#
# dilute samples with known concentration to 4nM
needs "Standard Libs/SortHelper"
needs "Next Gen Prep/NextGenPrepHelper"
needs "Standard Libs/Feedback"

class Protocol

    include SortHelper, NextGenPrepHelper, Feedback

    # M20 location
    NGS_BOX="NGS 4nM temp box in SF2"

    # I/O
    IN="DNA library in"
    OUT="DNA library out"

    SAMPLE_VOL_uL=1 # uL, starting sample volume for calculations
    FINAL_VOL_uL=10 # uL, minimal final volume for output stock
    MIN_VOL=0.5 # minimal volume for pippeting
    TOLERANCE=0.1 # allowed error in concentration
    FINAL_nmol_per_uL=(5.0/1e6) # target concentration, 4nM is 4/1e6 nmol/uL


    TEST_CONCENTRATIONS = [0.5, 0.6, 0.7, 0.719, 0.72, 0.8, 0.9, 1.0, 2.0, 4.0] # used for debug
    TEST_BINS = ["P1", "P2", "P3", "P4", "P5", "P6", "P7", "P8", "pos", "neg"] # used for debug
    TEST_BARCODES = ["AAAAA", "TTTTT", "GGGGG", "CCCCC", "ATATAT", "CGCGCG", "ACACAC", "TGTGTG", "ATCGAT", "TGCATG"] # used for debug

    def main

        associate_random_barcodes(operations: operations, in_handle: IN) if debug

        ops_sorted=sortByMultipleIO(operations, ["in"], [IN], ["id"], ["item"])
        operations=ops_sorted

        operations.map { |op|
            op.input(IN).item.associate(:concentration, (TEST_CONCENTRATIONS.rotate!.first))
            op.input(IN).item.associate(:length, 270 )
            op.input(IN).item.associate(:bin, (TEST_BINS.rotate!.first))
            op.input(IN).item.associate(:barcode, (TEST_BARCODES.rotate!.first))
        } if(debug)

        # get lengths of all fragments
        operations.each { |op|
            if(!op.input(IN).sample.nil?)
                nm=SampleType.find(op.input(IN).sample.sample_type_id).name # sample type
                case nm
                when "DNA Library" # should have "Library Stock" object_type with associated "length"
                    stock=find(:item, object_type: {name: "Library Stock"}, sample: {name: op.input(IN).sample.name} ).first
                    if(!stock.nil?)
                        op.temporary[:length] = stock.get(:length)
                    end
                end
            end
        }

        # ask tech to enter missing lengths
        length_unknown=operations.select{|op| op.temporary[:length].nil?}
        if(length_unknown.any?)
            # get lengths for all samples for which length is not defined - ideally this should not be needed!!!
            show do
                title "Enter the expected lengths in bp for these samples:"
                note "Ask a lab manager if you do not know"
                table length_unknown.start_table
                    .custom_column(heading: "Sample Name", checkable: true) { |op| op.input(IN).sample.name }
                    .get(:length, type: 'number', heading: "Expected length (bp)", default: 1)
                    .end_table
            end
        end
        operations.each { |op|
            op.input(IN).item.associate :length, op.temporary[:length]
        }

        # get rid of operations with no concentration or length
        operations.each { |op|
            begin
                tmp = op.input(IN).item.get(:concentration)
                #show { note "conc=#{tmp}" } if debug
            rescue
                op.error(:no_concentration, "The library has no concentration. Please Qubit and replan.")
                # TODO : move qubit code to library, call same code here
            end

            begin
                tmp = op.input(IN).item.get(:length)
                #show { note "length=#{tmp}" } if debug
            rescue
                op.error(:no_length, "The library has no length")
            end
        }

        ops = operations.running
        operations = ops  # all operations now have :concentration and :length

        operations.each { |op|
            if(concentration_in_nmol(op.input(IN).item.get(:concentration).to_f, op.input(IN).item.get(:length).to_f) < FINAL_nmol_per_uL)
                op.error(:low_concentration, "Concentration too low for NGS sequencing prep")
            end
        }

        if(!operations.running.any?)
            show { note "No operations left in Dilute to 4nM, returning." }
            return
        end

        # sort running ops so that input ids and sample labels are in consecutive order
        ops = sortByMultipleIO(operations.running, ["in"], [IN], ["id"], ["item"])
        operations = ops
        operations.make
        operations.retrieve

        # vortex and spin
        show {
            title "Vortex and spin samples"
            check "Vortex and spin samples #{operations.map{|op| op.input(IN).item}.to_sentence } to mix contents thoroughly"
        }

        # find sample and dilution volumes
        # on high sample volume end of scale (low starting concentration) 1 jump off is ~(0.5uL/10uL) or ~5% change in concentration, ok
        # on low sample volume (high initial concentration) it is ~(0.5uL/5uL) or %10 off
        operations.each { |op|
            sample_volume = SAMPLE_VOL_uL.to_f
            water_volume = dilution_volume(op.input(IN).item.get(:concentration).to_f, op.input(IN).item.get(:length).to_f, SAMPLE_VOL_uL).to_f

            fac1=0 # for higher volume if final volume too low
            fac2=0 # for higher volume if sample concentration is high

            # make sure have enough (>5uL) for next dilution step
            fac1=(FINAL_VOL_uL.to_f/(sample_volume + water_volume))
            # make sure there will not be more than ~10% error in sample concentration
            min_sample_vol=MIN_VOL.to_f/TOLERANCE
            fac2 = min_sample_vol/sample_volume

            fac=[fac1,fac2].max
            if(fac>1)
                sample_volume = fac*sample_volume
                water_volume = fac*water_volume
            end

            op.associate(:sample_volume, sample_volume.floor + MIN_VOL*(((sample_volume - sample_volume.floor)/MIN_VOL).round) )
            op.associate(:water_volume, water_volume.floor + MIN_VOL*(((water_volume - water_volume.floor)/MIN_VOL).round) )
        }


        # prep samples
        show {
            title "Dilute samples to 4nM (Transfer Water)"
            check "Grab #{operations.length} 1.5 mL tubes(s), label them <b>4 nM</b> on the side of the tube"
            check "Additionally label them #{operations.map { |op| op.output(OUT).item.to_s}.to_sentence }"
            note "Prepare the following 4nM samples:"

            table operations.start_table
                .output_item(OUT, heading: "DNA Library (output)")
                .custom_column(heading: "Water volume (µL)", checkable: true) { |op| op.get(:water_volume) }
                .end_table
            check "Vortex and spin <b>4 nM</b> samples to mix contents thoroughly"
        }
        
        show do 
            title "Dilute samples to 4nM (Transfer Sample)"
            check "Grab tubes #{operations.map { |op| op.output(OUT).item.to_s}.to_sentence }"
            note "Transfer associated sample volume from input to output:"
            
            table operations.start_table
                .input_item(IN, heading: "DNA Library (input)")
                .custom_column(heading: "Sample volume (µL)", checkable: true) { |op| op.get(:sample_volume) }
                .output_item(OUT, heading: "DNA Library (output)")
                .end_table
        end

        operations.each { |op|
            op.output(OUT).item.move(NGS_BOX)   # REMOVE THIS!!!!
            op.output(OUT).item.associate(:tag, "4 nM" ) # so not confused with 4ng/uL
        }

        operations.running.each do |op|
            txfr_barcode(op, IN, OUT)
            txfr_bin(op, IN, OUT)
        end

        if debug
            display_barcode_associations(operations: operations, in_handle: IN, out_handle: OUT)
        end

        # display map
        show {
            title "List of 4nM outputs"
            table operations.start_table
                .output_item(OUT, heading: "DNA Library (output)")
                .custom_column(heading: "name", checkable: false) { |op|
                    "#{op.output(OUT).item.sample.name}" }
                .custom_column(heading: "bin", checkable: false) { |op|
                    op.output(OUT).item.get(:bin) || "N/A" }
                .custom_column(heading: "Illumina index", checkable: false) { |op|
                    op.output(OUT).item.get(:barcode) || "N/A" }
                .end_table
        }

        operations.store

        get_protocol_feedback

        return {}

    end # main

    #---------------------------------------------------------------
    # dilution == water volume, for given init. concentration, length, and sample volume. (final concentration is 4nM)
    #---------------------------------------------------------------
    def dilution_volume(conc, length, vol)
        return vol*((concentration_in_nmol(conc, length)/FINAL_nmol_per_uL) - 1)
    end # def

    #---------------------------------------------------------------
    # calculates concentration in nmol
    # input in ng/uL, output in nM/uL. assumes dsDNA:
    # nmols = (weight in ng) / (base pairs x 650 daltons)
    #---------------------------------------------------------------
    def concentration_in_nmol(conc_in_ng, length)
        return conc_in_ng.to_f/(length * 650)
    end

end

sample_types:
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E coli strain, Fragment, Yeast Strain, DNA Library]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer, Fragment]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer, Fragment]}
    - {name: Restriction Enzyme(s), ftype: string}
    - {name: Yeast Marker, ftype: string}
    - {name: Fragment Mix Array, ftype: sample, array: true, sample_types: [Primer, Fragment]}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker, ftype: string, choices: Amp,Kan,Amp + Kan,Spec,Kan + Spec,Chlor,Tet,NA,Other, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS,TRP,URA,LEU,NatMX,KanMX,HygMX,BleoMX,5FOA,NA,Other, sample_types: [Primer]}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Transformation Temperature, ftype: number, choices: 37,30}
    - {name: Comp Cells, ftype: sample, sample_types: [E coli strain]}
  - {name: E coli strain, description: A strain of E coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E coli strain]}
  - {name: Yeast Strain, description: A strain of yeast distinguished from others by genomic or plasmid modifications}
    - {name: Parent, ftype: sample, sample_types: [Yeast Strain]}
    - {name: Integrant, ftype: sample, sample_types: [Plasmid, Fragment]}
    - {name: Plasmid, ftype: sample, sample_types: [Plasmid]}
    - {name: Integrated Marker(s), ftype: string}
    - {name: Plasmid Marker(s), ftype: string}
    - {name: Mating Type, ftype: string, choices: MATa,MATalpha,Diploid, required: true}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Comp_cell_limit, ftype: string, choices: Yes,No}
    - {name: Media, ftype: string}
    - {name: Has this strain passed QC?, ftype: string, choices: No,Yes}
    - {name: Haploids, ftype: sample, array: true, sample_types: [Yeast Strain]}
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object_types:
  - {name: 50 mL Agarose Gel in Gel Box, description: Used to run gels, handler: collection, unit: box, release_method: return, rows: 2, columns: 6}
  - {name: 50 mL 0.8 Percent Agarose Gel in Gel Box, description: Used to run gels;, handler: collection, unit: box, release_method: return, release_description: Return this item, rows: 2, columns: 6}
  - {name: Library Gel Slice, description: Multiple dsDNA fragments in a gel slice, handler: sample_container, unit: DNA Library, release_method: return, prefix: M20, sample_type_name: DNA Library}
  - {name: Gel Slice, description: Gel Slice cut from a gel lane after gel was run. Often placed in a 1.5 mL tube., handler: sample_container, unit: Fragment, release_method: dispose, prefix: M20, sample_type_name: Fragment}
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operation_type: Extract Gel Slice (NGS)
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Fragment, sample_types: [DNA Library, Fragment, Plasmid], object_types: [50 mL Agarose Gel in Gel Box, 50 mL 0.8 Percent Agarose Gel in Gel Box, 50 mL 0.8 Percent Agarose Gel in Gel Box], part: true, routing: F}
  - {ftype: sample, role: output, name: Fragment, sample_types: [DNA Library, Fragment, Plasmid], object_types: [Library Gel Slice, Gel Slice, 50 mL 0.8 Percent Agarose Gel in Gel Box], routing: F}
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cost_model:
def cost(_op)
  { labor: 2.08, materials: 0.20 }
end

protocol:
# Extract Fragment Protocol
# V1.0.2; 2017-07-17 JV
# Written by Ayesha Saleem
# Revised by Justin Vrana 2017-07-13; corrected upload issue
# Revised by Justin Vrana 2017-07-17; unique upload table
# Revised by SG 05-2018; accepts general gel inputs, does not assume output sample property "Length"

needs "Standard Libs/Feedback"
needs "Next Gen Prep/NextGenPrepHelper"
needs "Standard Libs/UploadHelper"

class Protocol

    include Feedback, NextGenPrepHelper, UploadHelper

    # I/O
    FRAGMENT = "Fragment"
    FRAGMENT_OUT ="Fragment"
    MIN_WEIGHT = 0.0
    MAXWEIGHT = 10.0
    TRIES = 3

    def main

        associate_random_barcodes(operations: operations, in_handle: FRAGMENT) if debug

        # Sort operations by gels and columns (these can get out of order from PCR)
        operations.sort! { |op1, op2|
            fv1 = op1.input(FRAGMENT)
            fv2 = op2.input(FRAGMENT)
            [fv1.item.id, fv1.row, fv1.column] <=> [fv2.item.id, fv2.row, fv2.column]
        }

        # find expected lengths for inputs - may need to add/change cases in the future
        operations.each { |op|
            if(!op.output(FRAGMENT).sample.nil?)
                nm=SampleType.find(op.output(FRAGMENT).sample.sample_type_id).name # sample type
                case nm
                when "Fragment" || "Plasmid" # have sample property "Length"
                    op.temporary[:length] = op.output(FRAGMENT).sample.properties["Length"]
                when "DNA Library" # should have "Library Stock" object_type with associated "length"
                    stock=find(:item,
                                object_type: { name: "Library Stock" },
                                sample: { name: op.output(FRAGMENT).sample.name }
                                ).first
                    if(!stock.nil?)
                        op.temporary[:length] = stock.get(:length)
                    end
                end
            end
        }

        # ask tech to enter missing lengths
        length_unknown=operations.select{|op| op.temporary[:length].nil?}
        if(length_unknown.any?)
            # get lengths for all samples for which length is not defined - ideally this should not be needed!!!
            show do
                title "Enter the expected lengths in bp for these samples:"
                note "Ask a lab manager if you do not know"
                table length_unknown.start_table
                    .custom_column(heading: "Sample Name", checkable: true) { |op| op.input(FRAGMENT).sample.name }
                    .get(:length, type: 'number', heading: "Expected length (bp)")
                    .end_table
            end
        end

        grouped_by_gel = operations.group_by { |op| op.input(FRAGMENT).collection }

        grouped_by_gel.each do |gel, grouped_ops|
            grouped_ops.extend(OperationList)
            # gel image names
            grouped_ops.each do |op|
                op.temporary[:image_name] = "gel_#{gel.id}"
            end
            
            # ---------------------------------------------IMAGE 
            show do
                title "Image gel #{gel.id}"
                check "Clean the transilluminator with ethanol."
                check "Put the gel #{gel} on the transilluminator."
                check "Turn off the room lights before turning on the transilluminator."
                check "Put the camera hood on, turn on the transilluminator and take a picture using the camera control interface on computer."
                check "Check to see if the picture matches the gel before uploading."
                check "Rename the picture you just took exactly as <b>#{grouped_ops.first.temporary[:image_name]}</b>."
            end
            
            # ---------------------------------------------UPLOAD
            ups = uploadData("/gel_#{gel.id}", 1, TRIES) # 1 file per gel
            image_name = grouped_ops.first.temporary[:image_name]
            # associate to gel, plan, op 
            # can't associate to outputs yet because they are only made if lengths are verified
            up=nil
            if(!(ups.nil?))
              up=ups[0]
        
              gel_item = Item.find(gel.id)
        
              # associate gel image to gel
              gel_item.associate image_name, "successfully imaged gel", up
              
              grouped_ops.each do |op| # associate to all operations connected to gel
                # description of where this op is in the gel, to be used as desc tag for image upload
                location_in_gel = "#{op.input(FRAGMENT).sample.name} is in row #{op.input(FRAGMENT).row + 1} and column #{op.input(FRAGMENT).column + 1}"
                
                # associate image to op with a location description
                op.associate image_name, location_in_gel, up
                
                # associate image to plan, or append new location to description if association already exists
                existing_assoc = op.plan.get(image_name)
                if existing_assoc && op.plan.upload(image_name) == up
                    op.plan.modify(image_name, existing_assoc.to_s + "\n" + location_in_gel, up)
                else
                    op.plan.associate image_name, location_in_gel , up
                end
              end
            end
            
            # ---------------------------------------------VERIFY
            expected_length_table = grouped_ops.start_table
                .custom_column(heading: "Gel ID") { |op| op.input(FRAGMENT).item.id }
                .custom_column(heading: "Row") { |op| op.input(FRAGMENT).row + 1 }
                .custom_column(heading: "Column", checkable: true) { |op| op.input(FRAGMENT).column + 1 }
                .custom_column(heading: "Expected Length") { |op| op.temporary[:length] }
                .get(:correct, heading: "Does the band match the expected length (y/n)", type: "string", default: "y")
                .end_table
                
            responses = show do
                title "Verify Fragment Lengths for gel #{gel.id}"
                table expected_length_table
            end
            
            grouped_ops.each { |op|
              if(op.temporary[:correct].upcase.start_with?("N"))
                op.error :incorrect_length, "The fragment did not match the expected length."
              end
            }
            
            grouped_ops.select! { |op| op.status == "running"}
            
            grouped_ops.make
            
            # ---------------------------------------------CUT
            qpcr1_ops = grouped_ops.select do |op|
                back_wire = op.input("Fragment").wires_as_dest[0]
                back_wire && FieldValue.find(back_wire.from_id).operation && FieldValue.find(back_wire.from_id).operation.input("Program") &&(FieldValue.find(back_wire.from_id).operation.input("Program").val == "qPCR1")
            end.extend(OperationList)
            qpcr2_ops = (grouped_ops - qpcr1_ops).extend(OperationList)
            
            if qpcr1_ops.any?
                show do
                    title "Cut Out Fragments"
                    note "Take out #{grouped_ops.length} 1.5 mL tubes and label accordingly: #{grouped_ops.map { |op| "#{op.output(FRAGMENT).item}" }.to_sentence}"
                    note "Now, cut out the bands and place them into the 1.5 mL tubes according to the following table:"
                    table qpcr1_ops.start_table 
                        .custom_column(heading: "Gel ID") { |op| "#{op.input(FRAGMENT).item}" }
                        .custom_column(heading: "Row") { |op| op.input(FRAGMENT).row + 1 }
                        .custom_column(heading: "Column", checkable: true) { |op| op.input(FRAGMENT).column + 1 }
                        .custom_column(heading: "1.5 mL Tube ID") { |op| "#{op.output(FRAGMENT_OUT).item}" }
                    .end_table
                end
            end
            
            if qpcr2_ops.any?
                show do
                    title "Cut Out Fragments"
                    note "Take out #{grouped_ops.length} 1.5 mL tubes and label accordingly: #{grouped_ops.map { |op| op.output(FRAGMENT).item}.to_sentence}"
                    note "Now, cut out the bands and place them into the 1.5 mL tubes according to the following table:"
                    table qpcr2_ops.start_table
                        .custom_column(heading: "Gel ID") { |op| op.input(FRAGMENT).item.id }
                        .custom_column(heading: "Row") { |op| op.input(FRAGMENT).row + 1 }
                        .custom_column(heading: "Column", checkable: true) { |op| op.input(FRAGMENT).column + 1 }
                        .custom_column(heading: "1.5 mL Tube ID") { |op| op.output(FRAGMENT).item.id }
                    .end_table
                end
            end
            # ---------------------------------------------WEIGHT
            show do
                title "Weight Gel Slices"
                note "Perform this step using the scale inside the gel room."
                check "Zero the scale with an empty 1.5 mL tube."
                check "Weigh each slice and enter the weights in the following table:"
                table grouped_ops.start_table
                  .custom_column(heading: "1.5 mL Tube ID") { |op| "#{op.output(FRAGMENT_OUT).item}" }
                  .get(:weight, type: 'number', heading: "Weight (g)",  default: MIN_WEIGHT)
                  .end_table
            end
            
            grouped_ops.each { |op|
                op.output(FRAGMENT_OUT).item.associate(image_name, "Your fragment is in row #{op.input(FRAGMENT).row + 1} and column #{op.input(FRAGMENT).column + 1}", up) 
                op.output(FRAGMENT_OUT).item.associate(:weight, op.temporary[:weight]) 
            }
        end
        
        choice = show do
            title "Clean Up"
            check "Turn off the transilluminator."
            check "Dispose of the gel and any gel parts by placing it in the waste container. Spray the surface of the transilluminator with ethanol and wipe until dry using a paper towel."
            check "Remove the blue light goggles, clean them, and put them back where you found them."
            check "Clean up the gel box and casting tray by rinsing with water. Return them to the gel station."
            check "Dispose gloves after leaving the room."
            grouped_by_gel.each do |gel, grouped_gel|
                gel.mark_as_deleted
            end
            select ["Yes", "No"], var: "choice", label: "Would you like to purify the gel slices immediately?"
        end
        
        operations.running.each do |op|
            txfr_barcode(op, FRAGMENT, FRAGMENT)
            txfr_bin(op, FRAGMENT, FRAGMENT)
        end
        
        if choice[:choice] == "Yes"
            show do
                title "Keep Gel Slices"
                note "Keep the gel slices on your bench to use in the next protocol."
            end
        else
            operations.store
        end

     
        # operations.make

        # split operationlist into ops that have originated from first pcr and those from second pcr.
        # qpcr1_ops = operations.select do |op|
        #     back_wire = op.input("Fragment").wires_as_dest[0]

        #     back_wire && FieldValue.find(back_wire.from_id).operation && FieldValue.find(back_wire.from_id).operation.input("Program") && (FieldValue.find(back_wire.from_id).operation.input("Program").val == "qPCR1")
        # end.extend(OperationList)
        # qpcr2_ops = (operations - qpcr1_ops).extend(OperationList)

        # show do
        #     title "Cut Out Fragments"
        #     note "Take out #{operations.length} 1.5 mL tubes and label accordingly: #{operations.collect { |op| op.output(FRAGMENT).item}.to_sentence}"
        #     note "Now, cut out the bands and place them into the 1.5 mL tubes according to the following table:"
        #     image "Actions/Gel/cut_extra_gel.jpg"
        #     table qpcr1_ops.start_table
        #     .custom_column(heading: "Gel ID") { |op| op.input(FRAGMENT).item.id }
        #     .custom_column(heading: "Row") { |op| op.input(FRAGMENT).row + 1 }
        #     .custom_column(heading: "Column", checkable: true) { |op| op.input(FRAGMENT).column + 1 }
        #     .custom_column(heading: "1.5 mL Tube ID") { |op| op.output(FRAGMENT).item.id }
        #     .end_table
        # end if qpcr1_ops.any?

        # show do
        #     title "Cut Out Fragments"
        #     note "Take out #{operations.length} 1.5 mL tubes and label accordingly: #{operations.collect { |op| op.output(FRAGMENT).item}.to_sentence}"
        #     note "Now, cut out the bands and place them into the 1.5 mL tubes according to the following table:"
        #     table qpcr2_ops.start_table
        #     .custom_column(heading: "Gel ID") { |op| op.input(FRAGMENT).item.id }
        #     .custom_column(heading: "Row") { |op| op.input(FRAGMENT).row + 1 }
        #     .custom_column(heading: "Column", checkable: true) { |op| op.input(FRAGMENT).column + 1 }
        #     .custom_column(heading: "1.5 mL Tube ID") { |op| op.output(FRAGMENT).item.id }
        #     .end_table
        # end if qpcr2_ops.any?

        # min_weight = 0.0
        # max_weight = 10.0

        # gel_slice_table = operations.start_table
        #     .custom_column(heading: "1.5 mL Tube ID") { |op| op.output(FRAGMENT).item.id }
        #     .get(:weight, type: 'number', heading: "Weight (g)")
        #     .end_table

        # show do
        #     title "Weight Gel Slices"
        #     note "Perform this step using the scale inside the gel room."
        #     check "Zero the scale with an empty 1.5 mL tube."
        #     check "Weigh each slice and enter the weights in the following table:"
        #     table gel_slice_table
        # end

        # gels = operations.collect{ |op| op.input(FRAGMENT).item }.uniq
        # choice = show do
        #     title "Clean Up"
        #     check "Turn off the transilluminator."
        #     check "Dispose of the gel and any gel parts by placing it in the waste container. Spray the surface of the transilluminator with ethanol and wipe until dry using a paper towel."
        #     check "Remove the blue light goggles, clean them, and put them back where you found them."
        #     check "Clean up the gel box and casting tray by rinsing with water. Return them to the gel station."
        #     check "Dispose gloves after leaving the room."
        #     gels.each do |g|
        #         g.mark_as_deleted
        #     end
        #     select ["Yes", "No"], var: "choice", label: "Would you like to purify the gel slices immediately?"
        # end

        # if choice[:choice] == "Yes"
        #     show do
        #         title "Keep Gel Slices"
        #         note "Keep the gel slices on your bench to use in the next protocol."
        #     end
        # else
        #     operations.store
        # end

        # # associate gel image, fragment lane with fragment and weight with the gel slices
        # operations.each { |op|
        #     i = op.input(FRAGMENT)
        #     o = op.output(FRAGMENT).item
        #     o.associate(:gel_image, "Your fragment is in row #{i.row + 1} and column #{i.column + 1}", op.temporary[:upload]) if o
        #     o.associate(:weight, op.temporary[:weight]) if o
        #     op.associate(:gel_image, "Your fragment is in row #{i.row + 1} and column #{i.column + 1}", op.temporary[:upload])
        #     op.plan.associate :choice, choice[:choice]
        # }

        # operations.running.each do |op|
        #     txfr_barcode(op, FRAGMENT, FRAGMENT)
        #     txfr_bin(op, FRAGMENT, FRAGMENT)
        # end

        # get_protocol_feedback

        # if debug
        #     display_barcode_associations(operations: operations, in_handle: FRAGMENT)
        # end

        return {}

    end

    #---------------------------------------------------------------

    def ask_for_uploads
        # Request technician for uploads
        # TODO: Ugly. Re-write this as some kind of "Upload Manager" convention?
        counter = 0
        ready = false
        msgs = []
        while counter < 5 and not ready
            counter += 1
            msgs.uniq!
            show do
                title "Upload all gel images"
                if msgs.any?
                    warning "Some images are missing. Make sure the images are named correctly and you've uploaded all of the images"
                    msgs.each do |msg|
                        warning msg if msg
                    end
                end
                upload var: "my_gel_pic"

                t = Table.new
                t.add_column("Gel Row/Col", operations.map { |op|
                    f = op.input(FRAGMENT)
                    "#{f.row + 1} #{f.column + 1}"
                })
                t.add_column("Image name", operations.map { |op| op.temporary[:image_name] } )
                t.add_column("Uploaded?", operations.map { |op|
                    x = "No"
                    x = "Yes (\"#{op.temporary[:image_name]}\")" if op.temporary[:uploaded]
                    x
                    } )
                table t
            end

            op_to_file_hash = match_upload_to_operations operations, :image_name, job_id=self.jid
            op_to_file_hash.each do |op, u|
                op.temporary[:upload] = u
            end

            ready = true
            operations.each do |op|
                if op.temporary[:upload].nil?
                    msgs << "    Gel image <b>\"#{op.temporary[:image_name]}\"</b> not uploaded!"
                    ready = false
                end
            end

            if counter > 5
                ready = true
            end

            if debug and counter > 1
                ready = true
            end
        end
    end

    # method that matches uploads to operations with a temporary[filename_key]
    def match_upload_to_operations ops, filename_key, job_id=nil, uploads=nil
        def extract_basename filename
            ext = File.extname(filename)
            basename = File.basename(filename, ext)
        end

        op_to_upload_hash = Hash.new
        uploads ||= Upload.where("job_id"=>job_id).to_a if job_id
            if uploads
                ops.each do |op|
                    upload = uploads.select do |u|
                        basename = extract_basename(u[:upload_file_name])
                        op.temporary[filename_key].strip == basename.strip
                    end.first || nil
                    op_to_upload_hash[op] = upload
                end
            end
        op_to_upload_hash
    end
end

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operation_type: Pour Gels
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: string, role: input, name: Gel Type, choices: regular,low-melting}
  - {ftype: number, role: input, name: Percentage, choices: 0.8,2.0}
  - {ftype: sample, role: output, name: Gel (array), object_types: [50 mL Agarose Gel in Gel Box], part: true, routing: G}
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cost_model:
def cost(_op)
  { labor: 10.70, materials: 5.81 }
end

protocol:
# SG
# this version is for advanced prep of multiple gels.
# array output length determines how many of the indicated (type,percentage) gels will be poured.
# all info regarding ladders is in "Run Pre-poured Gel" protocol.
needs "Standard Libs/SortHelper" # for sorting ops by media/container

class Protocol

    include SortHelper  
  
    # I/O
    PERCENTAGE="Percentage"
    TYPE="Gel Type"
    GEL="Gel (array)"
  
    # params
    GEL_VOL={qty: 50.0, units: "mL"}  
    GEL_GREEN={name: "Gel Green",qty: 5.0, units: "µL"}   
    TAE={name: "1xTAE", qty: 50, units: "mL"}
    COMB_TYPE="thick" # "thick" or "thin"
    MICROWAVE_TIME={qty: 30, units: "sec"} 
    GEL_LOCATION="Gel Room"
    GEL_COLLECTION="50 mL Agarose Gel in Gel Box" # collection object used for outputs
    AGAROSE="Agarose Gel" # sample with which empty gel is populated so that it will appear in inventory
  
    def main
    
        # sort ops by gel type, percentage
        ops_sorted = sortByMultipleIO(operations, ["in","in"], [TYPE,PERCENTAGE], ["",""], ["val","val"]) 
        operations = ops_sorted
        # NO MAKE! need to produce new collection(s)
        
        # get sample ID of agarose gel
        sid = Sample.find_by_name(AGAROSE).id
        show { note "sid=#{sid}" } if debug
        # make collections and populate collections with "Agarose Gel" BEFORE labeling gels
        operations.each { |op|
            op.output_array(GEL).each { |out|        
                object_type = ObjectType.find_by_name(GEL_COLLECTION)
                new_item = produce new_collection object_type.name 
                new_item.matrix = Array.new(object_type.rows) { Array.new(object_type.columns) { sid } }
                new_item.save
                out.set item: new_item
                # associate gel type, percentage, location
                out.item.associate :percentage, op.input(PERCENTAGE).val
                out.item.associate :type, op.input(TYPE).val 
                out.item.location=GEL_LOCATION
            }
        }
        
        # display how many gels will be made today
        tot_gels=0
        tab=[]
        tab[0]=["Gel Percentage","Agarose Type","Number of Gels"]
        gel_hash = group_ops_by_gel(operations)
        gel_hash.each_with_index { |(gel,ops),i|
            num_gels = ops.map { |op| op.output_array(GEL).length }.sum
            tab[i+1]=["#{gel[0].round(1)}",gel[1],num_gels]
            tot_gels=tot_gels+num_gels
        }
        show {
            title "You will prepare the following #{tot_gels} gels"
            table tab
        }
        
        # loop over seperate "pour gel"s
        operations.each { |op|
            op.output_array(GEL).collections.each_with_index { |it,i|
                mass = ( ((op.input(PERCENTAGE).val.to_f)/100) * GEL_VOL[:qty]).round(2) # g
                error = ( mass * 0.05 ).round(5) # allowed error in g is +/- 5%
                add_combs(i+1,tot_gels)
                pour_gel(mass,error,op.input(TYPE).val,i+1,tot_gels)
                add_gel_green(i+1,tot_gels)
                label_gel(it,op.input(TYPE).val,op.input(PERCENTAGE).val,i+1,tot_gels)
            }
        }
        
        return {}
     
    end
    
    #-----------------------------------------------------------------------------------------------------------
    
    # group operations by gel [percentage, type]
    def group_ops_by_gel(ops)
        gel_types=ops.map { |op| [op.input(PERCENTAGE).val.to_f, op.input(TYPE).val] }.uniq
        show { note "gel_types=#{gel_types}" } if debug
        ops_hash = Hash.new()
        gel_types.each { |m|
            ops_match = ops.select { |op| [op.input(PERCENTAGE).val.to_f, op.input(TYPE).val] == m } 
            ops_hash[m] = ops_match 
        }
        ops_hash
    end 
    
    # pour gel
    def pour_gel(mass,error,type,i,tot)
        show do
            title "Pour gel (#{i} of #{tot})"
            check "Grab a flask from on top of the microwave M2."
            check "Get a graduated cylinder from on top of the microwave. Measure and add <b>#{TAE[:qty]} #{TAE[:units]}</b> of #{TAE[:name]} from jug J2 to the flask."
            check "Using a digital scale, measure out <b>#{mass} g</b> (+/- #{error} g) of <b>#{type}</b> agarose powder and add it to the flask."
            if(type=="low melting")
                note "Low-melting agarose is located in the cabinet above the microwave."
            end
            check "Microwave <b>#{MICROWAVE_TIME[:qty]} #{MICROWAVE_TIME[:units]}</b> on high in microwave M2, then swirl. The agarose should now be in solution."
            note "If it is not in solution, microwave 7 seconds on high, then swirl. Repeat until dissolved."
            warning "Work in the gel room, wear gloves and eye protection all the time"
        end
    end
    
    def add_gel_green(i,tot)
        show do
            title "Add #{GEL_GREEN[:name]} (#{i} of #{tot})"  
            note "Using a 10 µL pipetter, take up <b>#{GEL_GREEN[:qty]*(GEL_VOL[:qty]/50.0)} #{GEL_GREEN[:units]}</b> of #{GEL_GREEN[:name]} into the pipet tip. Expel the #{GEL_GREEN[:name]} directly into the molten agar (under the surface), then swirl to mix."
            warning "#{GEL_GREEN[:name]} is supposedly safe, but stains DNA and can transit cell membranes (limit your exposure)."
            warning "#{GEL_GREEN[:name]} is photolabile. Limit its exposure to light by putting it back in the box."
        end
    end
    
    def add_combs(i,tot)
        show do
            title "Add combs (#{i} of #{tot})"
            check "Go get a 49 mL Gel Box With Casting Tray (clean)"
            check "Retrieve 2 <b>6-well</b> purple combs from A7.325"
            check "Position the gel box with the electrodes facing away from you."
            check "Add a purple comb to the side of the casting tray nearest the side of the gel box."
            check "Put the <b>#{COMB_TYPE}</b> side of the comb down."
            check "Add another purple comb to the center of the casting tray."
            check "Put the <b>#{COMB_TYPE}</b> side of the comb down."
            note "Make sure that both combs are well-situated in their grooves of the casting tray."
        end
    end
    
    def label_gel(gel_item,type,percentage,i,tot)
        show do
            title "Pour and label the gel (#{i} of #{tot})"
            note "Using a gel pouring autoclave glove, pour agarose from one flask into the casting tray. 
                          Pour slowly and in a corner for best results. Pop any bubbles with a 10 µL pipet tip."
            note "Write <b>#{gel_item}</b> + <b>#{percentage}% #{type}</b> + <b>#{Time.zone.now.to_date}</b> on piece of lab tape and affix it to the side of the gel box."
                note "Leave the gel at location A7.325 to solidify."
        end
    end
    
end

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object_types:
  - {name: Fragment Stock, description: Fragment stock in 1.5 mL tube, usually stored in M20 fridge., handler: sample_container, unit: Fragment, release_method: return, prefix: M20, sample_type_name: Fragment}
  - {name: Amplified Fragment Library, description: A special case of dsDNA fragment that contains many unique sequences (before addition of adapters for Illumina sequencing), handler: sample_container, unit: DNA Library, release_method: return, prefix: M20, sample_type_name: DNA Library}
  - {name: Library Stock, description: A library of multiple ssDNA variants, handler: sample_container, unit: DNA Library, release_method: return, prefix: M20, sample_type_name: DNA Library}
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operation_type: Purify Gel Slice (NGS)
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Gel, sample_types: [Fragment, DNA Library], object_types: [Gel Slice, Library Gel Slice], routing: G}
  - {ftype: sample, role: output, name: Fragment, sample_types: [Fragment, DNA Library, DNA Library, DNA Library], object_types: [Fragment Stock, Illuminated Fragment Library, Amplified Fragment Library, Library Stock], routing: G}
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cost_model:
def cost(_op)
  { labor: 6.33, materials: 1.89 }
end

protocol:
# Purify Gel Protocol

# This protocol purfies gel slices into DNA fragment stocks
needs "Library Cloning/PurificationHelper"
needs "Standard Libs/PrinterHelper"
needs "Standard Libs/Feedback"
needs "Next Gen Prep/NextGenPrepHelper"

class Protocol

    include PurificationHelper, NextGenPrepHelper
    include PrinterHelper
    include Feedback

    # I/O
    FRAGMENT="Fragment"
    GEL="Gel"
    KIT="QiagenPink" #"Promega" # "Qiagen" or "Promega". must match a key in KIT_SETTINGS hash in Library Cloning/PurificationHelper.

    # other
    LIB_CONTAINER="Library Gel Slice"

    def main
        associate_random_barcodes(operations: operations, in_handle: GEL) if debug

        if debug
           operations.shuffle!
        end

        keep_gel_slices = operations.first.plan.get(:choice) == "Yes"

        # use only "approved" slices, sort by increasing item id
        operations.retrieve interactive: keep_gel_slices
        operations.sort! { |op1, op2| op1.input(GEL).item.id <=> op2.input(GEL).item.id }
        operations.make

        heatElutionBuffer(GEL,KIT)

        volumeSetup(GEL,KIT)

        addLoadingBuffer(GEL, KIT)

        meltGel(GEL,KIT)

        loadSample(GEL,KIT)

        washSample(KIT)

        printLabels(FRAGMENT)

        eluteSample(FRAGMENT, KIT, 1) # ==1 for two rounds of elution

        # Library Gel Slice concentrations will be measured by Qubit, so don't waste material here
        ops=operations.select { |op| !(op.input(GEL).item.object_type.name == LIB_CONTAINER) }

        # measureConcentration(FRAGMENT,"output",ops)

        # saveOrDiscard(FRAGMENT,ops)

        operations.running.each do |op|
            txfr_barcode(op, GEL, FRAGMENT)
            txfr_bin(op, GEL, FRAGMENT)
        end

        operations.running.each { |op| op.input(GEL).item.mark_as_deleted }
        operations.store

        get_protocol_feedback

        if debug
            display_barcode_associations(
                operations: operations,
                in_handle: GEL,
                out_handle: FRAGMENT
            )
        end

        return {}

    end

end

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operation_type: Qubit concentration
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: qPCR sample in, sample_types: [DNA Library], object_types: [Illuminated Fragment Library]}
  - {ftype: sample, role: output, name: qPCR sample out, sample_types: [DNA Library], object_types: [Illuminated Fragment Library]}
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cost_model:
def cost(_op)
  { labor: 4.2, materials: 1.04 }
end

protocol:
# SG
# 
# measure sample concentration using Qubit before NGS run
needs "Standard Libs/SortHelper"
class Protocol

    include SortHelper

    # I/O
    IN="qPCR sample in"
    OUT="qPCR sample out"
    
    # other
    LAB="Biofab" # name of lab where Qubit is located
    BIOFAB="Biofab"
    Q_HS_BUFFER="Qubit 1x dsDNA HS Working Solution"
    NUM_STANDARDS=2
    Q_STANDARD_1="Qubit dsDNA HS Standard #1"
    Q_STANDARD_2="Qubit dsDNA HS Standard #2" 
    STANDARD_LOCATION="Media fridge"
    Q_TUBES="Qubit assay tube"
    STANDARD_VOL=10 #µL
    STANDARD_BUFFER_VOL=200-STANDARD_VOL #µL
    SAMPLE_VOL=2 #µL
    SAMPLE_BUFFER_VOL=200-SAMPLE_VOL #µL
    Q_ASSAY="dsDNA"
    Q_UNITS="ng/µL"
    
    def main
        
        operations.retrieve
        # NO MAKE - we are just passing
        
        # sort so that input ids and sample labels are in consecutive order
        ops = sortByMultipleIO(operations, ["in"], [IN], ["id"], ["item"])
        operations = ops
        
        # get more stuff
        show {
            title "Grab the following items"
            note "All items are located in #{STANDARD_LOCATION}"
            check "<b>#{Q_HS_BUFFER}</b>"
            check "<b>#{Q_STANDARD_1}</b>"
            check "<b>#{Q_STANDARD_2}</b>"
        }
        
        # prep standards
        show {
            title "Prepare standards"
            warning "In the following, make sure you are using #{Q_TUBES}s"
            warning "Label <b>lids</b> only"
            check "Grab #{NUM_STANDARDS} #{Q_TUBES}s, label their <b>lids</b> <b>S1</b> and <b>S2</b>"
            check "Add <b>#{STANDARD_BUFFER_VOL} µL</b> of <b>#{Q_HS_BUFFER}</b> to each of <b>S1</b>, <b>S2</b>"
            check "Add <b>#{STANDARD_VOL} µL</b> of #{Q_STANDARD_1} to <b>S1</b>"
            check "Add <b>#{STANDARD_VOL} µL</b> of #{Q_STANDARD_2} to <b>S2</b>"
        }
        
        # vortex and spin 
        show {
            title "Vortex and spin samples"
            check "Vortex and spin samples #{operations.map{|op| op.input(IN).item}.to_sentence } to mix contents thoroughly"   
        }
        
        # prep samples
        show {
            title "Prepare samples"
            warning "In the following, make sure you are using #{Q_TUBES}s"
            warning "Label <b>lids</b> only"
            check "Grab #{operations.length} #{Q_TUBES}(s), label their <b>lids</b> <b>D1</b> to <b>D#{operations.length}</b>"
            note "Prepare the following diluted samples:"
            table operations.start_table
                .custom_column(heading: "Dilute sample") { |op| "D#{operations.index(op) + 1}" }
                .custom_column(heading: "#{Q_HS_BUFFER} (µL)") { |op| SAMPLE_BUFFER_VOL }
                .input_item(IN)
                .custom_column(heading: "Sample volume (µL)") { |op| SAMPLE_VOL }
                .end_table
            check "Vortex diluted samples to mix contents thoroughly"   
            check "Incubate at room temperature for 2 minutes"
            if(LAB==BIOFAB)
                timer initial: { hours: 0, minutes: 2, seconds: 0}
            else
                note "In the meantime, take the standards <b>S1, S2</b> and samples <b>D1-D#{operations.length}</b> to the #{LAB} lab"
            end
        }
        
        # measure on Qubit
        show {
            title "Measure standards and samples on Qubit"
            if(LAB!=BIOFAB)
                warning "You will be using the #{LAB} lab's Qubit. Ask permission from someone in the lab!"
            end
            check "Turn on the machine and select the <b>#{Q_ASSAY}</b> assay on the home screen"
            check "Enter <b>original sample volume</b>: <b>#{SAMPLE_VOL} µL</b>"
            check "Enter <b>output sample units</b>: <b>#{Q_UNITS}</b>"
            check "You will be prompted to measure standards <b>S1</b> and <b>S2</b>. Do so."
            check "Measure samples <b>D1</b> to <b>D#{operations.length}</b>. Enter the results into the following table:"
            table operations.start_table
                .custom_column(heading: "Dilute sample") { |op| "D#{operations.index(op) + 1}" }
                .input_item(IN) 
                .get(:concentration, type: "number", heading: "Concentration (#{Q_UNITS})", default: 1.0)
                .end_table
        }
         
        operations.each { |op|
            op.input(IN).item.associate :concentration, op.temporary[:concentration]
            op.pass(IN,OUT)
        }
        
        # get more stuff
        show {
            title "Return the following items to #{STANDARD_LOCATION}"
            check "<b>#{Q_HS_BUFFER}</b>"
            check "<b>#{Q_STANDARD_1}</b>"
            check "<b>#{Q_STANDARD_2}</b>"
        }
        
        operations().store
        
    end # main

end

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object_types:
  - {name: 96 qPCR collection, description: contains up to 96 samples in qPCR stripwells or qPCR plate, handler: collection, unit: plate, release_method: return, prefix: Bench, rows: 8, columns: 12}
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operation_type: Run Pre-poured Gel
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Fragment, sample_types: [DNA Library], object_types: [96 qPCR collection], part: true, routing: F}
  - {ftype: sample, role: output, name: Fragment, sample_types: [DNA Library, Fragment], object_types: [50 mL Agarose Gel in Gel Box, 50 mL Agarose Gel in Gel Box], part: true, routing: F}
  - {ftype: string, role: input, name: Gel Type, choices: regular,low-melting}
  - {ftype: number, role: input, name: Percentage, choices: 0.8,2.0}
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cost_model:
def cost(_op)
  { labor: 1.78, materials: 1.07 }
end

protocol:
# SG
# this version for pre-poured gel
#
# gel type and percentage are associated with gel (collection)
# empty lanes depend on percentage:
#   0.8% - 2 empty lanes in each row (1kb and 100bp ladders)
#   2.0% - 1 empty lane  (100bp ladder)
#
needs "Standard Libs/Feedback"
needs "Standard Libs/Debug"
needs "Standard Libs/Units"
needs "Collection Models/DNAGel"
needs "Next Gen Prep/NextGenPrepHelper"
needs "Tissue Culture Libs/CollectionDisplay"

class Protocol

    include Feedback, Debug, Units, NextGenPrepHelper, CollectionDisplay

    # I/O
    FRAGMENT = "Fragment" # input and output
    TYPE = "Gel Type"
    PERCENTAGE = "Percentage"

    # other
    LADDER_100BP = "100 bp Ladder"
    LADDER_1KB = "1 kb Ladder"
    LOADING_DYE = "6X Loading Dye"

    DYE_CONCENTRATION = 6

    LADDER =    {qty: 10, units: MICROLITERS}
    TOTAL =     {qty: 60, units: MICROLITERS}
    TIME =      {qty: 40, units: MINUTES}
    VOLTAGE =   {qty: 100, units: VOLTS}

    def main

        if debug
            associate_test_volumes(operations)
            associate_random_barcodes(operations: operations, in_handle: FRAGMENT)
        end

        provisioned_gels = provision_gels(operations, true)

        ladders_and_dyes = take_ladders_dyes_and_gels(provisioned_gels: provisioned_gels)

        operations_running_strict.retrieve(only: FRAGMENT)

        set_up_gel_boxes

        add_dye_to_samples(operations: operations_running_strict, input_handle: FRAGMENT)

        add_samples(provisioned_gels: provisioned_gels)

        start_electrophoresis

        clean_up(operations: operations_running_strict, ladders_and_dyes: ladders_and_dyes)

        operations_running_strict.each do |op|
            txfr_barcode(op, FRAGMENT, FRAGMENT)
            txfr_bin(op, FRAGMENT, FRAGMENT)
        end

        get_protocol_feedback

        if debug
            display_barcode_associations(operations: operations_running_strict, in_handle: FRAGMENT)
            inspect provisioned_gels.values.flatten.map { |gel| gel.deleted? }.to_s
            inspect operations_running_strict.map { |op| op.output(FRAGMENT).collection.deleted? }.to_s
        end

        return {}

    end

    def provision_gels(operations, show_debug=false)

        ladder_100 = Sample.find_by_name(LADDER_100BP)
        ladder_1k = Sample.find_by_name(LADDER_1KB)

        if debug && show_debug
            operations.shuffle!
            debug_table(operations)
            # return
        end

        ops_by_gel = group_ops_by_gel(operations)

        if debug && show_debug
            ops_by_gel.each do |gel_params, ops|
                debug_table(ops, gel_params)
            end
            # return
        end

        provisioned_gels = {}
        gel_table = [["Gel Percentage", "Gel Type", "Gel Items"]]

        ops_by_gel.each do |gel_params, ops|
            percentage, agarose_type = gel_params

            ladders = [ladder_100]
            ladders.insert(0, ladder_1k) if percentage == '0.8'

            matching_gels = DNAGel.matching_gels(agarose_type: agarose_type, percentage: percentage)
            gel_layouts = []

            while ops.any? && matching_gels.any? do
                gel = matching_gels.shift
                gel_layout = DNAGel.new(gel: gel)
                gel_layout.add_ladders(samples: ladders)
                ops = gel_layout.add_operations(operations: ops, output_handle: FRAGMENT)
                gel_layout.mark_as_deleted
                gel_layouts << gel_layout
            end

            orphans = ops

            row = [
                percentage,
                agarose_type,
                gel_layouts.map { |g| g.gel.id }.sort.to_sentence,
            ]

            gel_table << row

            if orphans.any?
                orphans.each { |op| op.change_status('pending') }

                show do
                    title "Rejected Operations"
                    note "The following Operations will be set back to pending because there are not enough gels"
                    warning "Please notify a lab manager"
                    note orphans.map { |op| op.id }.sort.to_sentence
                end
            end

            provisioned_gels[gel_params] = gel_layouts
        end

        show do
            title "Get Gels"

            note "You will need the following #{DNAGel::GENERIC_GEL} Items"
            table gel_table
        end

        provisioned_gels
    end

    def take_ladders_dyes_and_gels(provisioned_gels:)
        ladder_and_dye_items = []
        gel_items = []
        ladder_samples = []

        provisioned_gels.values.each do |gel_layouts|
            gel_layouts.each do |gel_layout|
                ladder_samples += gel_layout.ladders
                gel_items << gel_layout.gel
            end
        end

        ladder_and_dye_items += ladder_samples.uniq.map { |ls| ls.in("Ladder Aliquot").first }
        ladder_and_dye_items << dye = Sample.find_by_name(LOADING_DYE).in("Screw Cap Tube").first

        take(ladder_and_dye_items, interactive: true)
        take(gel_items, interactive: true)

        ladder_and_dye_items
    end

    def set_up_gel_boxes
        show do
            title "Set up the power supply"
            note  "In the gel room, obtain a power supply and set it to #{qty_display(VOLTAGE)} and with a #{qty_display(TIME)} timer."
            note  "Attach the electrodes of the gel box lid(s) to the power supply."
            image "Items/gel_power_settings.JPG"
        end

        show do
            title "Set up the gel box(es)"

            check "Remove the comb(s) and put them away."
            check "Check the orientation of the gels in the gel boxes."
            warning "With the gel box(s) electrodes facing away from you, the top lane(s) should be on your left."

            check "Using a graduated cylinder, fill the gel box(s) with 250 #{MILLILITERS} of 1X TAE."
            warning "The TAE should just cover the center of the gel(s) and fill the wells."

            check "Put the graduated cylinder away."
            image "Items/gel_fill_TAE_to_line.JPG"
        end
    end

    def add_dye_to_samples(operations:, input_handle:)
        ops_by_collection = operations.group_by { |op| op.input(input_handle).collection }

        show do
            title "Add dye to samples"

            ops_by_collection.each_with_index do |(coll, ops), i|
                if i > 0
                    note " "; separator; note " "
                end

                note "Add the indicated volumes (in #{MICROLITERS}) of #{LOADING_DYE} to the highlighted wells in " \
                        "#{coll.object_type.name} <b>#{coll.id}</b>"

                rcx_list = ops.map do |op|
                    fv = op.input(input_handle)
                    dye_volume = fv.part.get(:volume) || 50
                    dye_volume = dye_volume.to_i / (DYE_CONCENTRATION - 1)
                    [fv.row, fv.column, dye_volume]
                end

                table highlight_alpha_rcx(coll, rcx_list)
            end
        end
    end

    def add_samples(provisioned_gels:)
        %w(ladder sample).each do |stub|
            provisioned_gels.each do |gel_params, gel_layouts|
                show do
                    title "Add #{stub}s"
                    gel_layouts.each_with_index do |gel_layout, i|
                        if i > 0
                            note " "; separator; note " "
                        end

                        if stub == 'ladder'
                            note "Add #{qty_display(LADDER)} ladders to gel " \
                                    "<b>#{gel_layout.gel.id}</b> as indicated:"
                            table gel_layout.ladder_display
                        else
                            note "Transfer the entire #{qty_display(TOTAL)} of each sample to gel " \
                                    "<b>#{gel_layout.gel.id}</b> as indicated:"
                            table gel_layout.sample_display(input_handle: FRAGMENT)
                        end
                    end
                end
            end
        end
    end

    def start_electrophoresis
        show do
            title "Start Electrophoresis"
            note "Carefully attach the gel box lid(s) to the gel box(es)."
            warning "Be careful not to bump the samples out of the wells."
            note "Attach the red electrode to the red terminal of the power supply, and the black electrode to the black terminal."
            note "Press the start button on the power supply."
            note "Make sure the power supply is not erroring (no E* messages) and that there are bubbles emerging from the wires in the bottom corners of the gel box."
            image "gel_check_for_bubbles"
        end

        show do
            title "Set a timer"
            check "When you get back to your bench, set a #{qty_display(TIME)} timer."
            check "When the timer is up, get a lab manager to check on the gel."
            note "The lab manager may have you set another timer after checking the gel."
        end
    end

    def clean_up(operations:, ladders_and_dyes:)
        show do
            title "Discard Stripwells"
            note "Discard all the empty stripwells"
        end

        release(ladders_and_dyes, interactive: true)

        # delete input collection parts
        operations.each do |op|
            fv = op.input(FRAGMENT)
            fv.collection.mark_as_deleted
            fv.part.mark_as_deleted
        end
    end

    # group operations by gel [percentage, type]
    def group_ops_by_gel(ops)
        ops_by_gel = ops.group_by { |op| pct_and_type(op) }
        ops_by_gel.each do |gel_params, ops|
            ops.sort_by! { |op| sort_list(op) }.extend(OperationList)
        end
        ops_by_gel
    end

    def sort_list(op)
        fv = op.input(FRAGMENT)
        [fv.child_item_id, fv.row, fv.column]
    end

    def pct_and_type(op)
        [op.input(PERCENTAGE).val, op.input(TYPE).val]
    end

    def associate_test_volumes(ops)
        ops.each { |op| op.input(FRAGMENT).part.associate(:volume, 32) }
    end

    def debug_table(ops, gel_params="")
        show do
            note gel_params
            table ops.start_table
                .input_item(FRAGMENT)
                .custom_column(heading: "Gel Row") { |op| op.input(FRAGMENT).row }
                .custom_column(heading: "Gel Col") { |op| op.input(FRAGMENT).column }
                .end_table
        end
    end

    # Selects `operations` with `status == 'running'`
    # Different from {Operations#running}, which selects based on
    #   `status != 'error'`
    #
    def operations_running_strict
        operations.select { |op| op.status == 'running' }
    end

end

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object_types:
  - {name: Yeast Library in Soln 1, description: concentrated yeast DNA library sample stored in Zymoprep solution 1, in -80, handler: sample_container, unit: DNA Library, release_method: return, prefix: M80, sample_type_name: DNA Library}
  - {name: Zymolyased Yeast Library, description: yeast DNA library sample after zymoprep step, before exonuclease step, handler: sample_container, unit: DNA Library, release_method: return, prefix: M20, sample_type_name: DNA Library}
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operation_type: Treat With Zymolyase
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Yeast Library, sample_types: [DNA Library], object_types: [Yeast Library in Soln 1], routing: L}
  - {ftype: sample, role: output, name: Yeast Library, sample_types: [DNA Library], object_types: [Zymolyased Yeast Library], routing: L}
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documentation:
Step 2 in preparation of yeast DNA library samples for NGS. 
Full flow is:
1. Store concentrated  sample in Zymoprep Solution 1, in -80
2. Zymoprep sample and clean
3. Exonuclease digestion and purification of sample
4. qPCR to amplify, clean up, using pETCON adapters 
5. qPCR to amplify and add illumina adapters

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cost_model:
def cost(_op)
  { labor: 6.25, materials: 1.84}
end

protocol:
# SG
# Refactored by Devin Strickland 2/12/18

needs "Yeast Display/YeastDisplayHelper"
needs "Standard Libs/Debug"
needs "Standard Libs/SortHelper"

class Protocol

    include YeastDisplayHelper, Debug, SortHelper

    INPUT_YEAST = 'Yeast Library'
    OUTPUT_YEAST = INPUT_YEAST

    MIXER = "orbital shaker in the 37 #{DEGREES_C} incubator"

    ZYMOLYASE_VOL = { qty: 5, units: MICROLITERS }
    ZYMOLYASE_TIME = { qty: 4, units: HOURS }
    SPEED = { qty: 900, units: 'RPM' }

    def main

        # sort ops by id - DO NOT DELETE
        ops_sorted=sortByMultipleIO(operations.running, ["in"], [INPUT_YEAST], ["id"], ["item"])
        operations=ops_sorted

        operations.retrieve

        operations.each do |op|
            op.pass(INPUT_YEAST)
            op.output(OUTPUT_YEAST).item.move_to(MIXER)
        end

        zymolyase = Item.where(sample_id: Sample.find_by_name("Zymolyase")).where(Item.arel_table[:location].not_eq('deleted')).order('id ASC').first

        # Get ice blocks
        get_zymolyase

        thaw_samples zymolyase

        treat_with_zymolyase

        show do
            title "Return the following item(s)"

            note "Return Zymolyase at #{zymolyase.location}"
        end

        operations.store

        return {}

    end

    def get_zymolyase
        show do
            title "Grab an ice block"

            warning "In the following step you will need to take Zymolyase enzyme out of freezer. Make sure the enzyme is kept on ice for the duration of the protocol."
        end
    end

    def thaw_samples zymolyase
        show do
            title "Thaw samples"

            check "Grab zymolyase from #{zymolyase.location}"
            check "Allow the samples to thaw on the 42C heatblock for 5 minutes"
        end
    end

    def treat_with_zymolyase
        show do
            title "Treat samples with zymolyase"

            note "Add zymolyase to each sample in the fume hood according to the table"
            table operations.start_table
              .input_item(INPUT_YEAST)
              .custom_column(heading: "zymolyase (#{ZYMOLYASE_VOL[:units]})", checkable: true) { |op| ZYMOLYASE_VOL[:qty] }
              .end_table
            note "Vortex samples after zymolyase is added."
            check "Place the samples on the #{MIXER} for <b>#{qty_display(ZYMOLYASE_TIME)}</b> at #{qty_display(SPEED)}"
        end
    end

end

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operation_type: Yeast Plasmid Extraction
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Yeast Library, sample_types: [DNA Library], object_types: [Zymolyased Yeast Library], routing: L}
  - {ftype: sample, role: output, name: Plasmid Library, sample_types: [DNA Library], object_types: [Plasmid Library], routing: L}
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cost_model:
def cost(op)
  { labor: 9.79, materials: 1.42  }
end

protocol:
# SG
# Refactored by Devin Strickland 2/12/18

needs "Next Gen Prep/NextGenPrepHelper"
needs "Standard Libs/Units"
needs "Yeast Display/YeastDisplayHelper"
needs "Standard Libs/Debug"
needs "Standard Libs/SortHelper"
needs "Standard Libs/Feedback"

class Protocol

    include NextGenPrepHelper, Units, YeastDisplayHelper, Debug, SortHelper, Feedback

    INPUT_YEAST = "Yeast Library"
    OUTPUT_PLASMID = "Plasmid Library"

    SOLN2 = "Lysis buffer (Solution 2)"
    SOLN2_VOL = { qty: 200, units: 'µl' }
    SOLN2_TIME = { qty: 5, units: 'min' }

    SOLN3 = "Neutralizing buffer (Solution 3)"
    SOLN3_VOL = { qty: 400, units: 'µl' }

    FREEZE_TIME = { qty: 30, units: 'min' }
    INVERT_TIMES = 10

    def main

        operations.retrieve

        # sort by input id before make
        ops = sortByMultipleIO(operations, ["in"], [INPUT_YEAST], ["id"], ["item"])
        operations = ops
        operations.make

        put_samples_in_freezer

        thaw_samples

        gather_materials

        assign_tube_numbers(INPUT_YEAST, OUTPUT_PLASMID)

        number_tubes

        lyse_and_neutralize

        pellet_cell_debris

        # number_tubes_and_columns

        wash_samples

        elute_samples(OUTPUT_PLASMID)

        operations.each { |op|
            if( !(op.input(INPUT_YEAST).item.get(:bin).nil?) ) # sorted sample
                op.output(OUTPUT_PLASMID).item.associate(:bin, op.input(INPUT_YEAST).item.get(:bin))
            end
            op.input(INPUT_YEAST).item.mark_as_deleted
        }

        operations.store

        get_protocol_feedback

        return {}

    end

    def gather_materials
        show do
            title "Gather the following materials"

            check "#{SOLN2} from Zympoprep kit (at least #{operations.length*SOLN2_VOL[:qty]} #{SOLN2_VOL[:units]}) BLUE color solution"
            check "#{SOLN3} from Zympoprep kit (at least #{operations.length*SOLN3_VOL[:qty]} #{SOLN3_VOL[:units]}) YELLOW color solution"
            # check "#{operations.length} Qiagen miniprep column(s)"
            check "PB, PE, EB buffers from Qiagen kit"
        end
    end

    def put_samples_in_freezer
        show do
            title "Freeze the samples"

            check "Place the rack containing the samples in the -80C"
            check "Set timer for <b>#{qty_display(FREEZE_TIME)}</b>"
        end
    end

    def thaw_samples
        show do
            title "Thaw the samples"

            check "When timer is finished, retrieve samples from -80C and thaw on 42 C heat block"
            check "Set timer for <b>5 minutes</b>"
            check "After setting the timer, proceed to the next step to gather items"
        end
    end

    def number_tubes
        show do
            title "Re-label tubes"

            note "Number the tubes according to the table"
            table operations.start_table
                .input_item(INPUT_YEAST)
                .custom_column(heading: "Number", checkable: true) { |op| op.input(INPUT_YEAST).item.associations[:tube_number] }
                .end_table
        end
    end

    def lyse_and_neutralize
        show do
            title "Lyse the samples"

            check "Add <b>#{qty_display(SOLN2_VOL)}</b> of #{SOLN2} BLUE color solution to each sample"
            check "Start 5 minute timer and invert samples <b>#{INVERT_TIMES} times</b> to mix"
            check "At 3 minute mark invert samples <b>5 more times</b>"

            # note "While you wait, get #{operations.length} #{MICROFUGE_TUBE}s and number them 1 - #{operations.length}"
        end

        show do
            title "Neutralize the samples"

            check "When the timer is finished, add <b>#{qty_display(SOLN3_VOL)}</b> of #{SOLN3} YELLOW color solution to all samples"
            check "Invert samples <b>#{INVERT_TIMES} times</b> to mix"
        end
    end

    def pellet_cell_debris
        show do
            title "Pellet cell debris"

            [MICROFUGE_TUBE, COLUMN].each do |receptacle|
                check CENTRIFUGE % qty_display(LONG_SPIN_EXTRACT_PLASMID)
                check "While waiting, get #{operations.length} #{receptacle}s and label them 1 - #{operations.length}"
                check "Transfer the supernatant of each sample to the new empty #{receptacle} with the same number"
            end

        end
    end

end

library: {name: NextGenPrepHelper, category: Next Gen Prep}
code_source:
needs "Standard Libs/Units"

module NextGenPrepHelper

    include Units

    LONG_SPIN = { qty: 5, units: MINUTES }
    LONG_SPIN_EXTRACT_PLASMID = { qty: 10, units: MINUTES }
    SHORT_SPIN = { qty: 1, units: MINUTES }

    PB = "binding buffer PB"
    PB_VOL = { qty: 700, units: MICROLITERS }
    PB_WASHES = 1

    PE = "wash buffer PE"
    PE_VOL = { qty: 700, units: MICROLITERS }
    PE_WASHES = 2

    EB = "elution buffer EB"
    EB_VOL = { qty: 30, units: MICROLITERS }

    COLUMN = "<b>blue</b> Qiagen miniprep column"
    MICROFUGE_TUBE = "1.5 #{MILLILITERS} microfuge tube"

    CENTRIFUGE_SPEED = "17,000 #{TIMES_G}"

    CENTRIFUGE = "Centrifuge samples at <b>#{CENTRIFUGE_SPEED}</b> for <b>%s</b>"
    ADD_BUFFER = "Add <b>%s</b> of <b>%s</b> to each column"


    def assign_tube_numbers(in_handle, out_handle)
        operations.sort_by! { |op| op.input(in_handle).item.id }

        operations.each_with_index do |op, i|
            op.input(in_handle).item.associate(:tube_number, "#{i + 1}")
            txfr_tube_numbers(op, in_handle, out_handle)
        end
    end

    def number_tubes_and_columns
        show do
            title "Number tubes and columns"

            note "Get #{operations.length} #{COLUMN}s with collection tubes"
            note "Number each set 1 - #{operations.length}"
        end
    end

    def wash_samples(pb_washes=PB_WASHES, pe_washes=PE_WASHES)
        show do
            title "Wash samples"

            pb_washes.times do |i|
                check CENTRIFUGE % qty_display(SHORT_SPIN)
                check "Aspirate the flow-through out of each collection tube"
                check ADD_BUFFER % [qty_display(PB_VOL), PB]
            end

            pe_washes.times do |i|
                check CENTRIFUGE % qty_display(SHORT_SPIN)
                check "Aspirate the flow-through out of each collection tube"
                check ADD_BUFFER % [qty_display(PE_VOL), PE]
            end
        end
    end

    def elute_samples(out_handle)
        show do
            title "Centrifuge 2X to remove residual buffer"

            check CENTRIFUGE % qty_display(SHORT_SPIN)
            check "Aspirate the flow-through out of each collection tube"
            check CENTRIFUGE % qty_display(SHORT_SPIN) + " to remove any residual buffer"

            check "While you wait, get #{operations.length} #{MICROFUGE_TUBE}s and label them with the numbers in the table"
            check "Carefully transfer each column to the corresponding #{MICROFUGE_TUBE}"

            table operations.start_table
                .custom_column(heading: "Column number") { |op| op.output(out_handle).item.associations[:tube_number] }
                .custom_column(heading: "Microfuge tube number", checkable: true) { |op| op.output(out_handle).item.id }
                .end_table
        end

        show do
            title "Elute DNA"

            check ADD_BUFFER % [qty_display(EB_VOL), EB]
            check "Wait 1 #{MINUTES}"
            check CENTRIFUGE % qty_display(SHORT_SPIN)

            check "Reload the eluted volume of each sample on its column"
            check "Wait 1 #{MINUTES}"
            check CENTRIFUGE % qty_display(SHORT_SPIN)

            check "Throw away the #{COLUMN}s and close the caps to the #{MICROFUGE_TUBE}s"
        end
    end

    def txfr_tube_numbers(op, in_handle, out_handle)
        op.output(out_handle).item.associate :tube_number, op.input(in_handle).item.associations[:tube_number]
    end

    def expanded_volume_display(qty, volume_factor, precision=0)
        total_qty = (qty[:qty] * volume_factor).round(precision)
        "#{total_qty} #{qty[:units]}"
    end

    def txfr_bin(op, in_handle, out_handle)
        txfr_association(op, in_handle, out_handle, :bin)
    end

    def txfr_barcode(op, in_handle, out_handle)
        txfr_association(op, in_handle, out_handle, :barcode)
    end

    def txfr_association(op, in_handle, out_handle, key)
        input_item = part_or_item(op.input(in_handle))
        output_item = part_or_item(op.output(out_handle))
        data = input_item.get(key)
        output_item.associate(key, data) if data
    end

    def part_or_item(field_value)
        field_value.part? ? field_value.part : field_value.item
    end

    def associate_random_barcodes(operations:, in_handle:)
        operations.each do |op|
            item = part_or_item(op.input(in_handle))
            item.associate(:barcode, Array.new(6) { |i| %w(C A T G).sample }.join)
        end
    end

    def display_barcode_associations(operations:, in_handle:, out_handle: nil)
        out_handle ||= in_handle
        show do
            table operations.start_table
                .custom_column(heading: "input item") { |op| part_or_item(op.input(in_handle)).to_s }
                .custom_column(heading: "input bc") { |op| part_or_item(op.input(in_handle)).get(:barcode) }
                .custom_column(heading: "output bc") { |op| part_or_item(op.output(out_handle)).get(:barcode) }
                .end_table
        end
    end

end

sample_types:
  - {name: Primer Mix, description: A mix of more than one primer}
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object_types:
  - {name: Primer Mix Stock, description: Stock containing equimolar mix of primers, handler: sample_container, unit: Primer Mix, release_method: return, prefix: M20, sample_type_name: Primer Mix}
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operation_type: Make qPCR Fragment
category: Preparative qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Forward Primer, sample_types: [Primer Mix], object_types: [Primer Mix Stock], routing: FP}
  - {ftype: sample, role: input, name: Reverse Primer, sample_types: [Primer Mix], object_types: [Primer Mix Stock], routing: RP}
  - {ftype: sample, role: input, name: Template, sample_types: [DNA Library, DNA Library, DNA Library, Fragment], object_types: [Post-exonuclease, Amplified Fragment Library, Library Stock, Fragment Stock], routing: T}
  - {ftype: string, role: input, name: Program, choices: qPCR1,qPCR2}
  - {ftype: sample, role: output, name: Fragment, sample_types: [DNA Library], object_types: [96 qPCR collection], part: true, routing: T}
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cost_model:
def cost(_op)
  { labor: 7.04, materials: 1.69 }
end

protocol:
# Make qPCR Fragment

needs "Preparative qPCR/PreparativeqPCRHelper"

class Protocol

    include PreparativeqPCRHelper

    def main

        run_protocol

    end

end

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object_types:
  - {name: Primer Aliquot, description: Primers at low concentration (10uM) for every day use, handler: sample_container, data: { "measure": { "type": "concentration", "unit": "micromolar" } }, unit: Primer, release_method: return, prefix: M20, sample_type_name: Primer}
  - {name: 96-Well Primer Aliquot Plate, description: 96-well plate containing primers at aliquot concentration of 10 µM (or other concentration as specified)., handler: collection, unit: Primer, release_method: return, prefix: N/A, rows: 8, columns: 12}
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operation_type: Make qPCR Fragment WITH PLATES
category: Preparative qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Forward Primer, sample_types: [Primer], object_types: [Primer Aliquot], routing: FP}
  - {ftype: sample, role: input, name: Reverse Primer, sample_types: [Primer], object_types: [96-Well Primer Aliquot Plate], part: true, routing: RP}
  - {ftype: sample, role: input, name: Template, sample_types: [DNA Library, DNA Library], object_types: [Post-exonuclease, Amplified Fragment Library], routing: T}
  - {ftype: string, role: input, name: Program, choices: qPCR1,qPCR2}
  - {ftype: sample, role: output, name: Fragment, sample_types: [DNA Library], object_types: [96 qPCR collection], part: true, routing: T}
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cost_model:
def cost(_op)
  { labor: 7.4, materials: 2.37 }
end

protocol:
#  Make qPCR Fragment WITH PLATES

needs "Preparative qPCR/PreparativeqPCRHelper"

class Protocol

    include PreparativeqPCRHelper

    def main

        run_protocol

    end

end

library: {name: FragmentLibrary, category: Preparative qPCR}
code_source:
needs "Standard Libs/ProvenanceFinder"
needs "Standard Libs/CommonInputOutputNames"
needs "Standard Libs/Debug"
needs "Sample Models/Primer"
needs "Sample Models/OligoPool"
needs "Sample Models/DNALibrary"

class FragmentLibrary

    include ProvenanceFinder, CommonInputOutputNames, Debug

    OVERHANG = 'Overhang Sequence'
    ANNEAL = "Anneal Sequence"
    FWD_TEMPLATE = "FWD_%d"
    REV_TEMPLATE = "REV_%d"
    OLIGO_POOL = "Oligo Pool"

    attr_accessor :known_item, :sample
    attr_accessor :oligo_pools, :provenance, :errors
    attr_accessor :forward_primer, :reverse_primer
    attr_accessor :min_length, :max_length

    # Instantiates a new FragmentLibrary
    #
    # @param known_item [Item] an existing item, some type of DNA fragment library
    # @param sample [Sample] Sample used for addressing sublibraries in OligoPool
    # @return [FragmentLibrary]
    def initialize(known_item:, sample: nil)
        @known_item = known_item
        @sample = sample || known_item.sample
        @errors = {}
        @provenance = []
        @oligo_pools = []
        @forward_primer = nil
        @reverse_primer = nil
        @min_length = 0
        @max_length = 0
    end

    # Find Operation history of @known_item
    #
    # @return [Array]
    def detect_provenance
        self.provenance = walk_back("Don't Stop", known_item.id)
    end

    # Parses Operation history for last Item that is an Oligo Pool
    #
    # @return [OligoPool]
    def detect_oligo_pools
        if (oligo_pool = sample.properties.fetch(OLIGO_POOL))
            self.oligo_pools = [OligoPool.new(sample: oligo_pool)]
            return
        end

        detect_provenance unless provenance.present?
        prov_fvs = FieldValue.includes(:child_sample)
                             .where(parent_id: prov_op_ids, parent_class: "Operation")
        ogp_fvs = prov_fvs.select { |fv| OligoPool.is_oligo_pool?(fv.sample) }

        if ogp_fvs.present?
            self.oligo_pools = ogp_fvs.map { |fv| OligoPool.from_item(fv.item) }
            return
        end

        if known_item.get(:template_id)
            self.oligo_pools = [OligoPool.new(sample: Sample.find(known_item.get(:template_id)))]
            return
        end

        if known_item.get(:template)
            oligo_pool_id = known_item.get(:template).match(/(\d+) (\w+)/).captures[0]
            self.oligo_pools = [OligoPool.new(sample: Sample.find(oligo_pool_id))]
            return
        end

        unless oligo_pools.present?
            errors[:missing_oligo_pool] = "Could not find oligo pool(s) for Item #{known_item}."
        end
    end

    # Compares names of all sulibraries of all oligo pools with all sample names from
    #   the provenance,including self.sample. Returns the names of sublibraries that
    #   are found in the names of any of the samples. The entire sublibrary name
    #   must appear in the sample name, but the comparison is case-insensitive.
    def sublibrary_names
        prov_fvs = FieldValue.includes(:child_sample)
                             .where(parent_id: prov_op_ids, parent_class: "Operation")
        prov_sample_names = prov_fvs.map { |fv| fv.sample.try(:name) }
        prov_sample_names.append(sample.name)
        all_sublib_names = oligo_pools.map { |ogp| ogp.names }.flatten
        all_sublib_names.select { |s| prov_sample_names.select { |p| p =~ /#{s}/i }.any? }
    end

    # TODO: This is probably going to break if there are two sublibraries from
    # the same oligo pool
    def sublibrary_name(oligo_pool)
        names = oligo_pool.names & sublibrary_names
        unless names.length == 1
            msg = "Failed to find unique sublibrary: #{names}"
            raise SublibraryIndexError.new(msg)
        end
        names.first
    end

    def prov_op_ids
        provenance.flatten.map { |op| op.id }
    end

    def variants
        oligo_pools.map { |ogp| ogp.variants(sublibrary_name(ogp)).to_i }.reduce(:+)
    end

    def min_oligo_pool_length
        oligo_pools.map { |ogp| ogp.min_length(sublibrary_name(ogp)).to_i }.min
    end

    def max_oligo_pool_length
        oligo_pools.map { |ogp| ogp.max_length(sublibrary_name(ogp)).to_i }.max
    end

    # Sets primers to be used for amplifying library in calling Protocol
    # Will be used to calculate the size distribution of the OUTPUT FragmentLibrary
    #
    # @param forward_primer [Sample]
    # @param reverse_primer [Sample]
    def set_primers(forward_primer:, reverse_primer:)
        forward_primer = Primer.new(sample: forward_primer)
        reverse_primer = Primer.new(sample: reverse_primer)
        if primers_valid?(forward_primer: forward_primer, reverse_primer: reverse_primer)
            self.forward_primer = forward_primer
            self.reverse_primer = reverse_primer
        else
            input_primers = [forward_primer.name, reverse_primer.name].to_sentence
            msg = "Primer pair #{input_primers} invalid for Oligo Pool #{oligo_pool.sample.id}."
            errors[:mismatched_sublibrary_primers] = msg
        end
    end

    def primers_valid?(forward_primer:, reverse_primer:)
        oligo_pools.each do |oligo_pool|
            return false unless oligo_pool.primers_valid?(
                forward_primer: forward_primer,
                reverse_primer: reverse_primer,
                sublibrary_name: sublibrary_name(oligo_pool)
            )
        end
        true
    end

    # TODO: This doesn't deal with branched provenance correctly.
    # Different branches can have oligo pools with differrent priming sites.
    # PCRs need to be simulated in the correct order for each branch.
    def calculate_length
        next_sites = oligo_pools.map { |ogp| ogp.priming_sites(sublibrary_name(ogp)) }
                                .flatten.uniq

        unless next_sites.length == 2
            ogp_ids = oligo_pools.map { |ogp| ogp.sample.id }
            msg = "Incompatible priming sites #{next_sites} found for OligoPools #{ogp_ids}"
            raise IncompatiblePrimingSitesError.new(msg)
        end

        priming_length = next_sites[0].length + next_sites[1].length

        lengths = oligo_pools.map { |ogp| ogp.lengths(sublibrary_name(ogp)) }.flatten.sort
        min_internal_length = lengths[0] - priming_length
        max_internal_length = lengths[-1] - priming_length


        primer_sets.each do |primers|
            sites = next_sites
            next_sites = []

            bindings = Primer.get_bindings(primers: primers, sites: sites)

            bindings.each do |b|
                priming_length += b[:added_length]
                next_sites.append(b[:primer].sequence)
            end
        end

        self.min_length = min_internal_length + priming_length
        self.max_length = max_internal_length + priming_length
    end

    def primer_sets
        primer_sets = []

        pcr_ops.each do |op|
            # There are older operations that use different I/O names
            # fp = Primer.new(op.input(FORWARD_PRIMER).sample)
            # rp = Primer.new(op.input(REVERSE_PRIMER).sample)
            # primer_sets.append([fp, rp])
            primers = op.inputs.select { |fv| fv.sample && fv.sample.sample_type.name == "Primer" }
            primers = primers.map { |fv| Primer.from_item(fv.item) }
            primer_sets.append(primers)
        end

        if forward_primer && reverse_primer
            primer_sets.append([forward_primer, reverse_primer])
        end

        primer_sets
    end

    def pcr_ops
        provenance.flatten.select { |op| pcr_operation?(op) }.reverse
    end

    def pcr_operation?(op)
        pcr_op_names = [
            "Make qPCR Fragment",
            "Make qPCR Fragment WITH PLATES",
            "Library qPCR Black Box"
        ]

        pcr_op_names.include?(op.operation_type.name)
    end
end

library: {name: PreparativeqPCRHelper, category: Preparative qPCR}
code_source:
# needs "Standard Libs/SortHelper"
needs "Standard Libs/UploadHelper"
needs "Standard Libs/Units"
needs "Standard Libs/CommonInputOutputNames"
needs "Standard Libs/Feedback"
needs "Standard Libs/Debug"
needs "Standard Libs/OperationErrors"
# needs "Standard Libs/HiddenInputHelper"

needs "PCR Libs/PCRComposition"
needs "PCR Libs/PCRProgram"
needs "PCR Libs/MasterMixHelper"

needs "Preparative qPCR/FragmentLibrary"
# needs "Preparative qPCR/PreparativeqPCRDebug"

module IlluminaAdapters

    INDEX_LENGTH = 6 # bp, length of illumina index

    # Gets illumina barcode from a primer sample
    #
    # @param primer [Sample] the primer
    # @return [String] the barcode
    def get_barcode(primer)
        # TODO: Refactor to deal with primers that don't have an overhang sequence
        barcode = ""
        ohang = primer.properties.fetch("Overhang Sequence")
        if ohang
            if ohang.length >= INDEX_LENGTH
                tmp = ohang[(ohang.length-INDEX_LENGTH)..(ohang.length-1)].downcase.reverse!
                barcode = tmp.gsub('a','T').gsub('t','A').gsub('c','G').gsub('g','C')
            end
        end
        barcode
    end

    # Adds barcodes to a matrix associated with the output collection
    #
    # @param ops [OperationList]
    # @param input_name [String]
    # @param output_name [String]
    def associate_barcodes(ops:, input_name:, output_name:)
        ops.each do |op|
            # to avoid errors with Primer Mix items
            if op.input(input_name).sample_type.name == "Primer"
                barcode = get_barcode(op.input(input_name).sample)
                if barcode
                    part = op.output(output_name).part
                    part.associate(:barcode, barcode)
                end
            end
        end
    end

end

# Handles bin numbers for multi-bin sorting
#
module MultiBinSorting

    # Adds bin numbers to a matrix associated with the output collection
    #
    # @param ops [OperationList]
    # @param input_name [String]
    # @param output_name [String]
    def associate_bins(ops:, input_name:, output_name:)
        ops.each do |op|
            bin = get_bin(op: op, input_name: input_name)
            if bin
                part = op.output(output_name).part
                part.associate(:bin, bin)
            end
        end
    end

    # Provides a String for display of the bin number in tables
    #
    # @param ops [OperationList]
    # @param input_name [String]
    def bin_display(op:, input_name:)
        bd = get_bin(op: op, input_name: input_name) || "N/A"
        bd.to_s
    end

    # Accessor method for the bin number associated with the input
    #
    # @param ops [OperationList]
    # @param input_name [String]
    def get_bin(op:, input_name:)
        op.input(input_name).item.get(:bin)
    end
end

# Contains constants and functions related to preparative qPCR
# Largely follows Baker Lab protocols.
#
# There are four main types of amplification:
# 1) lib_qPCR1 - for ssDNA -> dsDNA, verifying that amplification works,
#      verifying that length is as designed, and (optionally) extracting a
#      specific sublibrary from the other variants in the oligo pool.
# 2) lib_qPCR2 - for amplifying the chosen sublibrary with the correct length for
#      the subsequent transformation step, which typically requires a
#      large quantity of dsDNA.
# 3) qPCR1 - for initial amplification of plasmid or genomic DNA, prior to
#      NGS amplicon sequencing.
# 4) qPCR2 - for further amplification after qPCR1 and adding adaptors and
#      indices for NGS
#
# Each qPCR step has a TEST run to get the correct qPCR stopping cycle (before
#   amplification becomes non-exponential), and and a REAL run for generating
#   the amplicon of interest.
#
# @author Sarah Goldberg
# @author Devin Strickland <strcklnd@uw.edu>
module PreparativeqPCRHelper

    require 'matrix'

    # include SortHelper
    include UploadHelper, Units
    #include HiddenInputHelper
    include CommonInputOutputNames
    include Feedback, Debug, OperationErrors
    # include PreparativeqPCRDebug
    include MasterMixHelper
    include MultiBinSorting, IlluminaAdapters

    MAKE_EXTRA = 1.2
    DEFAULT_STAMP_COLUMNS = 8
    SOFTWARE = "Biorad CFX Manager"
    BASE_DIR = "Libraries/Documents/Public Documents/Bio-Rad/CFX/Users/admin"
    PROG_DIR = "#{BASE_DIR}/NGSprep"
    EXPORT_DIR = "Desktop/Biofab qPCR Exports/"
    PCRD_SUFFIX = ".pcrd"
    CSV_SUFFIX = " -  Quantification Amplification Results_SYBR.csv"
    SUB_ITEM = "96 shallow plate (M20) part"
    M20_STR = 'M20PF '
    SPIN_TIME = { qty: "1", units: MINUTES }
    SPIN_RPM = { qty: "300", units: "RPM" }
    MAX_OPS = 96
    MIN_VOL = { qty: 10, units: MICROLITERS } # min volume for retaining primer aliquots. please check with lab manager before changing.
    ANSWERS = ["Y","N"]

    NGS_BOX_NAME = "B1234E2 M20 box"

    TEST = "TEST"
    REAL = "REAL"
    BACKGROUND_COLORS = [
        "#ff4133","#ff5733","#ffc033","#8eff33",
        "#33d6ff","#3357ff","#8e33ff","#ff33ea",
        "#ff4133","#ff5733","#ffc033","#8eff33"
    ]

    NUM_REACTIONS = {
        "qPCR1" => 2,
        "qPCR2" => 2,
        "lib_qPCR1" => 2,
        "lib_qPCR2" => 10,
    }

    # The top-level method that runs an entire preparative qPCR protocol
    # A protocol shouldn't have to do anything other than call this method
    #
    def run_protocol
        program_name = validate_operations
        composition = PCRComposition.new(program_name: program_name)
        program = PCRProgram.new(program_name: program_name, volume: composition.volume)

        # TODO: make this method smart enough to deal
        if program.program_name =~ /$lib_/
            initialize_fragment_libraries
        end

        report_errors
        return {} unless operations.running.present?

        sorted_ops = sort_ops
        prepare_materials(sorted_ops, composition)
        sorted_ops.make

        # TODO: create a MasterMix class that handles variables like this
        #   should also handle MAKE_EXTRA calculations
        stamp_columns = program.program_name == 'lib_qPCR2' ? 8 : nil
        set_up_reactions(sorted_ops, composition, stamp_columns)

        run_test_and_real(sorted_ops, program, stamp_columns)

        if program.program_name == "qPCR2"
            associate_barcodes(ops: sorted_ops, input_name: REVERSE_PRIMER, output_name: FRAGMENT)
        elsif program.program_name =~ /$lib_/
            associate_library_data(sorted_ops)
        end

        associate_bins(ops: sorted_ops, input_name: TEMPLATE, output_name: FRAGMENT)
        associate_volumes(ops: sorted_ops, output_name: FRAGMENT, volume: composition.volume)

        sorted_ops.each { |op| op.output(FRAGMENT).item.move(NGS_BOX_NAME) }

        pcr_cleanup
        operations.store

        # remaining_primers = check_primer_volumes(FORWARD_PRIMER, REVERSE_PRIMER)
        check_primer_volumes(sorted_ops, FORWARD_PRIMER, REVERSE_PRIMER)

        display_output_table(sorted_ops)

        get_protocol_feedback

        display_mapping(TEMPLATE, FRAGMENT, sorted_ops) if debug

        return {}
    end

    # Validates operations
    # Checks to see that there is only one qPCR program
    # Checks to see that there are not more than MAX_OPS operations
    # If either of these is true, then errors ALL the operations
    #
    # @return [String] the program name shared by all the operations
    def validate_operations
        ops_by_program = group_ops_by_parameter(PROGRAM, operations)

        msg = nil

        if ops_by_program.length != 1
            programs = ops_by_program.keys.join(", ")
            msg = "Job contains Operations with more than one program (#{programs})."
            msg += " Please replan."
        elsif operations.length > MAX_OPS
            msg = "Max number of ops is #{MAX_OPS} for a single Job."
            msg += " You have #{operations.length} ops. Please replan."
        elsif ops_by_program.keys.first == "lib_qPCR2" && operations.length > 12
            msg = "lib_qPCR2 program is limited to 12 reactions."
            msg += " You have #{operations.length} ops. Please replan."
        end

        if msg.present?
            operations.each do |op|
                op.error :job_failed_validation, msg
            end
        end

        ops_by_program.keys.first
    end

    # Finds data for setting up FragmentLibrary objects and initializes them
    # Attaches a FragmentLibrary to each Operation through its `temporary` variable
    #
    def initialize_fragment_libraries
        operations.each do |op|
            fragment_library = FragmentLibrary.new(
                known_item: op.input(TEMPLATE).item,
                sample: op.output(FRAGMENT).sample
            )
            fragment_library.detect_provenance
            fragment_library.detect_oligo_pools

            fragment_library.set_primers(
                forward_primer: op.input(FORWARD_PRIMER).sample,
                reverse_primer: op.input(REVERSE_PRIMER).sample
            )

            if fragment_library.errors.present?
                fragment_library.errors.each { |k,v| op.error(k,v) }
            else
                op.temporary[:fragment_library] = fragment_library
            end
        end
    end

    # Groups operations by parameter value
    #
    # @param handle [String] handle of the parameter
    # @param ops [OperationList] operations to be grouped
    # @return [Hash]
    def group_ops_by_parameter(handle, ops)
        ops.group_by { |op| op.input(handle).val }
    end

    # Sorts running operations by REVERSE_PRIMER and TEMPLATE
    #
    # @return [OperationList]
    def sort_ops
        operations.running.sort_by { |op| sort_array(op) }.extend(OperationList)
    end

    # Provides attributes for and Operation in the form of an Array
    #
    # @param op [Operation]
    # @return [Array]
    def sort_array(op)
        [op.input(REVERSE_PRIMER).sample.name, op.input(TEMPLATE).item.id]
    end

    # Provisions all materials required for the protocol, and instructs the technician
    #   to retrieve them
    #
    # @param ops [OperationList]
    # @param composition [PCRComposition]
    # @todo Make this deal better with primers that are in collections
    #   e.g., "take" and "release" are used in place of .retrieve and .store so
    #   that sub-plate items are not retrieved or stored individually
    def prepare_materials(ops, composition)
        # ops.each do |op|
        #     add_hidden_input(op, DYE_SAMPLE, dye)
        #     add_hidden_input(op, POLYMERASE_SAMPLE, polymerase)
        # end

        templates = ops.map { |op| op.input(TEMPLATE).item }

        fwd_primers = get_primer_set(ops, FORWARD_PRIMER)
        rev_primers = get_primer_set(ops, REVERSE_PRIMER)

        items_to_take = [templates, fwd_primers, rev_primers]

        if composition.polymerase.item
            items_to_take << composition.polymerase.item
        end

        if composition.dye.item
            items_to_take << composition.dye.item
        end

        take(items_to_take.flatten, interactive: true, method: 'boxes')

        vortex_samples([fwd_primers, rev_primers, templates])
    end

    # Finds and returns a list of all Primers used across all Operations
    #
    # @param ops [OperationList]
    # @param handle [String]
    # @return [Array<Item>]
    def get_primer_set(ops, handle)
        # primers - need to find the collection if the Primer is a sub-item
        primers = ops.map do |op|
            if op.input(handle).object_type.name == SUB_ITEM
                Item.find(op.input(handle).item.get("collection"))
            else
                op.input(handle).item
            end
        end

        primers.uniq
    end

    # Vortexes and spins down samples before use
    #
    # @param all_items [Array<Item>] array of items to vortex and spin down
    def vortex_samples(all_items)
        all_items = all_items.flatten.uniq
        collections, non_collections = all_items.partition { |it| it.collection? }

        show do
            title "Vortex and Spin Down"

            note "Briefly vortex and spin down all items in 1.5 ml tubes"
            if collections.any?
                note "Centrifuge the following plates for #{qty_display(SPIN_TIME)} at #{qty_display(SPIN_RPM)}: #{collections.to_sentence}"
                warning "Please balance the centrifuge"
            end
        end
    end

    # Sets up and dispenses master mixes, primers, templates
    # Splits into TEST and REAL reactions
    #
    # @param ops [OperationList]
    # @param composition [PCRComposition]
    # @param stamp_columns [Numeric, Boolean] can be either a number of replicates of
    #   each reaction (stamps) or a Boolean. If merely true, then defaults to
    #   the `DEFAULT_STAMP_COLUMNS` number of replicates
    def set_up_reactions(ops, composition, stamp_columns=nil)
        mult = MAKE_EXTRA

        if stamp_columns
            stamp_columns = DEFAULT_STAMP_COLUMNS unless stamp_columns.is_a?(Numeric)
            stamp_columns = stamp_columns.to_i
            mult *= (1 + stamp_columns)
        else
            mult *= 2
        end

        prepare_stripwells(FRAGMENT, ops, stamp_columns)

        input_names = [FORWARD_PRIMER, REVERSE_PRIMER, TEMPLATE]
        group_input_names, grouped_ops = group_ops_by_inputs(input_names: input_names, ops: ops)
        inputs_not_added = input_names - group_input_names

        ops_by_master_mix = make_master_mixes(
            grouped_ops: grouped_ops,
            input_names: group_input_names,
            composition: composition,
            mult: mult
        )

        dispense_master_mix(
            output_name: FRAGMENT,
            ops_by_master_mix: ops_by_master_mix,
            composition: composition,
            mult: stamp_columns ? mult : 2
        )

        ops_by_master_mix.values.each do |ops|
            inputs_not_added.each do |input_name|
                dispense_component(
                    input_name: input_name,
                    output_name: FRAGMENT,
                    ops: ops,
                    composition: composition,
                    mult: stamp_columns ? mult : 2
                )
            end
        end

        split_reactions(FRAGMENT, ops, composition, stamp_columns)
    end

    # Prepares stripwells for qPCR
    #
    # @param outname [String] output name
    # @param ops [OperationList] operations
    # @param stamp_columns [FixNum, Boolean] can be either a number of replicates of
    #   each reaction (stamps) or a Boolean.
    def prepare_stripwells(outname, ops, stamp_columns)
        coll = ops.first.output(outname).collection # get collection item
        tab = display_plate(outname, ops, stamp_columns)
        show do
            title "Prepare Stripwells"
            check "Get two holders for 96 stripwells"
            check "Label the holders <b>#{coll}-#{TEST}</b> and <b>#{coll}-#{REAL}</b>"
            note "These are for <b>#{TEST}</b> and <b>#{REAL}</b> qPCR runs"

            if stamp_columns.is_a?(Numeric) && stamp_columns > 1
                warning "Each column is #{stamp_columns} identical reactions"
            end

            check "Get white stripwells with connected transparent caps"
            note "Arrange a set of stripwells in each holder and label their <b>sides</b> as follows:"
            table tab
        end
    end

    # Splits reactions into REAL and TEST tubes
    #
    # @param outname [String] output name
    # @param ops [OperationList] operations
    # @param program [String] the qPCR program
    def split_reactions(outname, ops, composition, stamp_columns)
        coll = ops.first.output(outname).collection

        step_1 = "Place <b>#{coll}-#{TEST}</b> and <b>#{coll}-#{REAL}</b>"
        step_1 += " in the same orientation on the bench"

        if stamp_columns.is_a?(Numeric) && stamp_columns > 1
            step_2 = "Transfer <b>#{composition.qty_display}</b> of"
            step_2 += " reaction mix from each microfuge tube"
            step_2 += " to the corresponding tube in"
            step_2 += " <b>#{coll}-#{TEST}</b>"

            step_3 = "Transfer <b>#{stamp_columns} #{composition.qty_display} aliquots</b> of"
            step_3 += " reaction mix from each microfuge tube"
            step_3 += " to the corresponding <b>column</b> in"
            step_3 += " <b>#{coll}-#{REAL}</b>"
        else
            step_2 = "Transfer <b>#{composition.qty_display}</b> of"
            step_2 += " reaction mix from each tube in"
            step_2 += " <b>#{coll}-#{TEST}</b> to the corresponding tube in"
            step_2 += " <b>#{coll}-#{REAL}</b>"

            step_3 = ""
        end

        show do
            title "Split Reactions"
            check step_1
            check step_2
            check step_3 if step_3.present?
        end
    end

    # Runs both qPCRs, uploads and parses run data
    #
    # @param ops [OperationList]
    # @param program [String]
    def run_test_and_real(ops, program, stamp_columns=nil)
        run_qpcr(FRAGMENT, ops, program, TEST, stamp_columns)
        csv_upload = upload_data(FRAGMENT, ops, program, TEST)
        find_stop_cycles(FRAGMENT, ops, csv_upload)
        separate_tubes(FRAGMENT, ops, REAL, stamp_columns)
        run_qpcr(FRAGMENT, ops, program, REAL, stamp_columns)
        upload_data(FRAGMENT, ops, program, REAL)
    end

    # Runs qPCR program for operations using program
    #
    # @param outname [String] output name
    # @param ops [OperationList] operations
    # @param program [String] the qPCR program
    # @param test_str [String] typically 'TEST' or 'REAL', info related to qPCR run
    def run_qpcr(outname, ops, program, test_str, stamp_columns)
        coll = ops.first.output(outname).collection

        display_plate = display_plate(outname, ops, stamp_columns)
        stub = upload_stub(program, test_str)

        show do
            title "Place #{test_str} stripwells in qPCR machine"
            check "Open #{SOFTWARE} on qPCR computer and make sure the qPCR is not running"
            note "Open lid"
            note "Place the <b>#{coll}-#{test_str}</b> stripwells in the block in the following order"
            table display_plate
            note "Close lid"
        end

        show do
            title "Program Setup: #{stub}"
            check "Open #{SOFTWARE} if not already open"
            check "Choose <b>File->Open->Protocol</b>"
            if stub == "qPCR1_REAL"
                check "Navigate to <b>#{PROG_DIR}</b> and select <b>NGS_qPCR1_2.prcl</b>"
            else 
                check "Navigate to <b>#{PROG_DIR}</b> and select <b>#{program.name}</b>"
            end
            note "Your program should have the following steps. If not, notify a lab manager."
            table program.table
            check "Set the <b>Sample Volume</b> to <b>#{program.volume}</b>"
            check "Press <b>OK</b> (in the #{SOFTWARE})"
        end

        show do
            title "Plate Setup: #{stub}"
            check "Press <b>Next</b>. You are now on the <b>Plate</b> tab. Press <b>Select Existing</b>."
            check "Navigate to <b>#{PROG_DIR}</b>. Choose <b>#{program.plate}</b> and press <b>Open</b>."
            check "Press <b>Edit Selected</b>. Make sure the occupied wells match the table below:"
            table display_plate
            check "Make sure <b>SYBR</b> is checked for all wells in the table"
            check "Press <b>OK</b> (n the #{SOFTWARE})"
        end

        data = show do
            title "Run: #{stub}"
            check "Press <b>Next</b>. You are now on the <b>Start Run</b> tab."
            check "Press <b>Start Run</b>"
            note "Copy the auto-generated filename for the run and paste it below:"
            get "text", var: :name, label: "file name", default: "filename#{PCRD_SUFFIX}"
            if(test_str == TEST)
                check "Proceed immediately to the next step while you are waiting for the qPCR <b>#{test_str}</b> run to finish"
            end
        end

        ops.first.plan.associate "#{upload_stub(program, test_str)}_name", data[:name]

        if(test_str == REAL) # display stop cycle
            stop_cycle = ops.first.output(outname).collection.get("stop_cycle")

            if stop_cycle.present?
                msg = "The qPCR samples each require a different number of cycles."
                msg += " To acheive this without disrupting the run, you will press"
                msg += " on the <b>Pause</b> software button at the <b>end</b> of the"
                msg += " elongation step at each of the cycles:"
                msg += " <b>#{stop_cycle.flatten.uniq.select!{|i| i>0}.sort.to_sentence}</b>"
                msg += " and remove the relevant sample(s), as indicated in the following table:"

                show do
                    title "Stop at Cycle"
                    note msg
                    table display_stop_cycles(outname, ops, stamp_columns)
                end
            else # this should not happen!
                raise "No stop cycle info found."
            end
        end

    end

    # Uploads .pcrd and .csv file and returns .csv upload (both are associated to plan)
    #
    # @param outname [String] output name
    # @param ops [OperationList] operations
    # @param program [String] the qPCR program
    # @param test_str - typically 'TEST' or 'REAL', info related to qPCR run (enables differentiation between multiple associations in the same plan)
    # @return csv_upload - upload hash of .csv file (y/n .csv is not verified by function)
    def upload_data(outname, ops, program, test_str)
        plan = ops.first.plan
        coll = Item.find(ops.first.output(outname).collection)
        stub = upload_stub(program, test_str)

        show do
            title "Save data: #{stub}"
            note "When qPCR reaches #{program.final_step}, stop run"
            note "Export the current run in csv format to <b>#{EXPORT_DIR}</b>, as follows:"
            check "Delete any existing files in <b>#{EXPORT_DIR}</b>"
            check "In the #{SOFTWARE}, press <b>Export->Export all data sheets->csv</b>, and save to <b>#{EXPORT_DIR}</b>"
            note "You will now be asked to upload specific files"
        end

        # upload .csv of fluorescence per cycle (used for stop-cycle detection)
        csv_name = plan.get("#{stub}_name").gsub(PCRD_SUFFIX,CSV_SUFFIX)
        csvs = uploadData("#{EXPORT_DIR}/#{csv_name}", 1, 3)
        csv_upload = nil
        if csvs.present?
            plan.associate "#{stub}_csv", "#{stub}", csvs[0] # upload
            coll.associate "#{stub}_csv", csvs[0] # regular association
            csv_upload = csvs[0]
        end

        # upload .pcrd
        ups = uploadData("#{BASE_DIR}/#{plan.get("#{stub}_name")}", 1, 3)
        if(!ups.nil?)
            plan.associate "#{stub}_data", "#{stub}", ups[0] # upload
            coll.associate "#{stub}_data", ups[0] # regular association
        end

        return csv_upload
    end

    def upload_stub(program, test_str)
        "#{program.program_name}_#{test_str}"
    end

    # Finds stop cycle for REAL run from TEST run and associates to collection
    # Assumes all operations in ops are in the same collection
    # Algorithm - max in diff of data (right edge)
    # If algorithm fails, protocol asks that stop cycles be entered manually.
    #
    # @param outname [String] name of output collection
    # @param ops [OperationList] operations
    # @param program [String] program
    # @param up - upload hash of data file that contains the TEST run data used for calculation of the stop cycle (XXX - Quantification Amplification Results_SYBR.csv)
    def find_stop_cycles(outname, ops, up)
        stop_cycle = Array.new(8){Array.new(12, 0)} # stop_cycle(i,j) is stop cycle for collection item (i,j)
        outcol = ops.first.output(outname).collection # same collection for all ops

        mismatch = false # mismatch between collection, stop_cycle data

        # attempt to find stop cycle
        if(!up.nil?)
            data = read_url(up) # get data
            if(!data.empty?)
                # knock of first row and first 2 columns, leaving transposed so each col is now a row. (see format of XXX - Quantification Amplification Results_SYBR.csv)
                row_offset = 1
                col_offset = 2
                dataArray = data[row_offset..-1].transpose[col_offset..-1]
                dataArray.each_with_index { |col, ind|  # column of ORIGINAL data
                    diff = col.each_cons(2).map { |a,b| b.to_f - a.to_f } # difference of each consecutive 2 elements
                    maxind = diff.each_with_index.max[1] + 2 # returns index of max value in diff, + 1 for right edge, + 1 for a little extra
                    col_str = data[0][ind+col_offset] # well label, e.g. "A1"
                    mymatch = /(?<myrow>[A-H]{1,1})(?<mycol>[0-9]{1,2})/.match(col_str)
                    if(!mymatch.nil?)
                        rr = (mymatch[:myrow].ord-"A".ord).to_i    # subtract ascii value of "A" from A-H to get row integer, 0-7
                        cc = mymatch[:mycol].to_i-1                # col integer, 0-11
                        if(outcol.matrix[rr][cc] > 0) # collection item exists for this (rr,cc)
                            stop_cycle[rr][cc] = maxind
                        else
                            show { note "stop_cycle indices (#{rr},#{cc}) do not match collection!" } if debug
                            mismatch = true
                        end
                    end
                }

                num_stop_samples = outcol.matrix.flatten.map{|x| x>0 ? 1:0}.sum
                num_collection_samples = stop_cycle.flatten.map{|x| x>0 ? 1:0}.sum
                show { note "HAVE DATA from test run. match = #{mismatch}, num_stop_samples = #{num_stop_samples}, num_collection_samples = #{num_collection_samples}" } if debug

                # associate stop cycles to collection item
                if( !mismatch || (num_stop_samples == num_collection_samples) ) # 1:1 correlation between collection, stop_cycle indices
                    Item.find(outcol.id).associate "stop_cycle", stop_cycle
                end

            else
                show { note "problem: data.empty? = #{data.empty?}" } if debug
            end

        else
            show { note "problem: up.nil? = #{up.nil?}" } if debug
        end

        # something went wrong, need manual entry of stop_cycles
        if(Item.find(outcol.id).get("stop_cycle").nil?)
            show {
                title "Enter Stop Cycles for #{REAL} run manually"
                table ops.start_table
                  .output_collection(outname, heading: outname)
                  .custom_column(heading: "Plate position", checkable: true) { |op| "#{(op.output(outname).row + "A".ord).chr}#{op.output(outname).column + 1}" }
                  .get(:stop, type: 'number', heading: 'Stop qPCR at this cycle', default: 0)
                  .end_table
            }
            # associate manually-entered stop cycles to collection item
            ops.each { |op|
                stop_cycle[op.output(outname).row][op.output(outname).column] = op.temporary[:stop].round
            }
            Item.find(outcol.id).associate "stop_cycle", stop_cycle
        end

        if(debug)
            ops.each { |op|
                stop_cycle[op.output(outname).row][op.output(outname).column] = 5+rand(5).round
            }
            Item.find(outcol.id).associate "stop_cycle", stop_cycle
        end

    end

    # Separates single wells for individual extraction while qPCR is running
    #
    # @param outname [String] output name
    # @param ops [OperationList] operations
    # @param test_str [String] typically 'TEST' or 'REAL', info related to qPCR run
    def separate_tubes(outname, ops, test_str, stamp_columns)
        stop_cycles_tab = display_stop_cycles(outname, ops, stamp_columns)
        wells_tab = display_plate(outname, ops, stamp_columns)
        coll = ops.first.output(outname).collection # get collection item

        show do
            title "Separate #{test_str} stripwell tubes"
            note "During the <b>#{REAL}</b> qPCR run, you will need to remove single wells when different cycles are reached, according to the following:"
            table stop_cycles_tab
            check "Get a scissors and carefully separate the wells of <b>#{coll}-#{test_str}</b>"
            check "Verify that the separated wells are in the correct order:"
            table wells_tab
        end
    end

    def associate_library_data(ops)
        ops.each do |op|
            program = op.input(PROGRAM).val
            fragment_library = op.temporary[:fragment_library]
            output_item = op.output(FRAGMENT).part

            output_item.associate(:template_id, op.input(TEMPLATE).sample.id)
            output_item.associate(:forward_primer_id, op.input(FORWARD_PRIMER).sample.id)
            output_item.associate(:reverse_primer_id, op.input(REVERSE_PRIMER).sample.id)
            output_item.associate(:variants, fragment_library.variants)
        end
    end

    # Cleanup
    def pcr_cleanup
        show do
            title "Cleanup"
            check "Remove samples from the qPCR and stop the #{SOFTWARE}"
            check "Trash all <b>MM</b> tubes"
            check "Trash all <b>#{TEST}</b> stripwell tubes"
            warning "Keep <b>#{REAL}</b> tubes on bench for next protocol!"
        end
    end

    # Checks volumes of primer aliquots after use, before store
    # Deletes empty aliquots
    # OF for primers in plates
    #
    # @param ops [OperationList]
    # @param fwdname [String]
    # @param revname [String]
    def check_primer_volumes(ops, fwdname, revname)
        items_to_check = ops.map { |op| op.input(fwdname).item }.uniq
        items_to_check += ops.map { |op| op.input(revname).item }.uniq

        show do
            title "Check the remaining volume of the primers"

            check "Check the remaining volume in primer items #{items_to_check.to_sentence}"
            warning "Notify a lab manager if there is less than #{qty_display(MIN_VOL)} left for any of the primers"
        end
    end

    # Checks volumes of primer aliquots after use, before store
    # Deletes empty aliquots
    # OF for primers in plates
    #
    # @param fwdname [String]
    # @param revname [String]
    # @return [Array] items for primers with non-zero volume
    # def check_primer_volumes(fwdname, revname)
    #     remaining_primers = nil

    #     show do
    #         title "Check the remaining volume of the primers"

    #         table operations.uniq { |op| op.input(fwdname).item }.extend(OperationList).start_table
    #             .custom_column(heading: "Location") { |op| coll_id_display(op, fwdname) }
    #             .get(:have_fwd_volume, heading: "Is there more than #{MIN_VOL[:qty]} #{MIN_VOL[:units]} left?", type: "text", default: "Y")
    #             .end_table

    #         table operations.uniq { |op| op.input(revname).item }.extend(OperationList).start_table
    #             .custom_column(heading: "Location") { |op| coll_id_display(op, revname) }
    #             .get(:have_rev_volume, heading: "Is there more than #{MIN_VOL[:qty]} #{MIN_VOL[:units]} left?", type: "text", default: "Y")
    #             .end_table
    #     end

    #     # for debug - assign responses
    #     # if(debug)
    #     #     operations.each { |op|
    #     #         op.temporary[:have_fwd_volume] = ANSWERS.rotate!.first # "Y" or "N"
    #     #         op.temporary[:have_rev_volume] = ANSWERS.rotate!.first # "Y" or "N"
    #     #     }
    #     # end

    #     # find empty Primer Aliquot, Collection items
    #     fwd_empty = operations.select{|o| (o.temporary[:have_fwd_volume] == "N") }.map { |op| op.input(fwdname).item }
    #     rev_empty = operations.select{|o| (o.temporary[:have_rev_volume] == "N") }.map { |op| op.input(revname).item }
    #     trash_items = [fwd_empty,rev_empty].flatten.uniq
    #     trash_colls = []  # collection items to be trashed

    #     if(!trash_items.empty?)
    #         trash_items.each { |it|
    #             if(it.object_type.name == SUB_ITEM) # need to remove deleted item and check collection for remaining items
    #                 coll = Collection.find(it.get("collection"))
    #                 locs = Matrix[*(coll.matrix)].index(it.id)  # find position of item in collection matrix, returns array with [row,col]
    #                 if(!locs.nil?)
    #                     coll.matrix[locs[0]][locs[1]] = -1
    #                     coll.save
    #                     if( (coll.matrix.flatten.select { |well| well>0 }.count) == 0 ) # no items left in collection matrix
    #                         trash_colls.push(coll) # collection items to be trashed
    #                         coll.mark_as_deleted   # delete collection
    #                     end
    #                 else # should not happen!!! will show up in test mode because the assignment of collections is fake
    #                     show { warning "Please notify a lab manager that you could not find the location of #{it} in #{coll}!" }
    #                 end

    #             end
    #             it.mark_as_deleted # delete item
    #         }
    #         show {
    #             title "Trash empty Primer items"
    #             note "Trash primer aliquots #{trash_items.select{ |it| !(it.object_type.name == SUB_ITEM) }.to_sentence}" # can't trash parts of a plate
    #             if(!trash_colls.empty?)
    #                 note "Trash primer plates #{trash_colls.to_sentence}"
    #             end
    #         }
    #     end

    #     # remaining primers (to be stored)
    #     fwd_primers = operations.select{|o| !(o.temporary[:have_fwd_volume] == "N") }.map { |op|
    #         (op.input(fwdname).object_type.name == SUB_ITEM) ? Item.find(op.input(fwdname).item.get("collection")) : op.input(fwdname).item }

    #     rev_primers = operations.select{|o| !(o.temporary[:have_rev_volume] == "N") }.map { |op|
    #         (op.input(revname).object_type.name == SUB_ITEM) ? Item.find(op.input(revname).item.get("collection")) : op.input(revname).item }

    #     remaining_primers = [fwd_primers, rev_primers].flatten.uniq

    #     return remaining_primers

    # end

    # Adds volumes to parts associated with the output collections
    #
    # @param ops [OperationList]
    # @param output_name [String]
    # @param volume [FixNum, Float, String]
    def associate_volumes(ops:, output_name:, volume:)
        ops.each do |op|
            op.output(output_name).part.associate(:volume, volume)
        end
    end

    def display_output_table(ops)
        # display table for lab manager (to cut and paste for NGS record)
        show do
            title "List of qPCR fragments"
            table ops.start_table
                .input_item(TEMPLATE)
                .custom_column(heading: "name") { |op| op.input(TEMPLATE).sample.name }
                .custom_column(heading: "bin") { |op| bin_display(op: op, input_name: TEMPLATE) }
                .custom_column(heading: "qPCR program") { |op| op.input(PROGRAM).val }
                .custom_column(heading: "Illumina index") { |op| "<pre>#{op.output(FRAGMENT).part.get(:barcode)}</pre>" }
                .end_table
        end
    end

    # Displays mapping between input and output items
    #
    # @param inname [String] input name
    # @param outname [String] output name
    # @param ops [OperationList] operations
    def display_mapping(inname, outname, ops)
        show do
            title "mapping"
            table ops.start_table
                .output_item(outname)
                .input_item(inname)
                .custom_column(heading: "Volume") { |op| op.output(FRAGMENT).part.get(:volume) }
                .end_table
        end
    end

    # Creates table with the stop cycles defined for samples in output collection
    #
    # @param outname [String] output name
    # @param ops [OperationList] operations
    # @param program [String] the qPCR program
    # @return tab - table containing stop cylces (to be used in show block)
    def display_stop_cycles(outname, ops, stamp_columns)
        tab = Array.new(8) { Array.new(12, "-") }
        stop_cycle = ops.first.output(outname).collection.get("stop_cycle")

        if stop_cycle.present?
            stop_cycle[0].length.times do |cc|
                col = cc+1
                if stamp_columns
                    if(stop_cycle[0][cc]>0)
                        tab[0][cc] = {content: "A#{col} cycle #{stop_cycle[0][cc]}", check: "true"}
                        (1..stamp_columns - 1).each do |rr|
                            row = (rr+"A".ord).chr
                            tab[rr][cc] = {content: "cycle #{stop_cycle[0][cc]}", check: "false"} # wells are connected
                        end
                    end
                else
                    stop_cycle.length.times { |rr|
                        if(stop_cycle[rr][cc]>0)
                            row = (rr+"A".ord).chr
                            tab[rr][cc] = {content: "#{row}#{col} cycle #{stop_cycle[rr][cc]}", check: "true"}
                        end
                    }
                end
            end
        end

        return tab
    end

    # Displays id / position for items that may be sub-items in collections
    #
    # @param op [Operation]
    # @param handle [String] input or output name
    # @param role [String] "input" or "output"
    # @param hide_id [Boolean] whether to include the Collection ID
    # @return [String] Item ID followed by location if a collection
    def coll_id_display(op, handle, role='input', hide_id=false)
        if role == 'input'
            fv = op.input(handle)
        elsif role == 'output'
            fv = op.output(handle)
        else
            raise "Unrecognized role: #{role}"
        end

        display = hide_id ? "" : fv.item.to_s

        if fv.item.collection?
            row, col = fv.row, fv.column

            unless row && col
                row, col = fv.collection.find(fv.sample).first
            end

            display += " #{well_pos_display(row, col)}"
        end

        display.strip
    end

    def well_pos_display(row, col)
        alpha_r = ('A'..'H').to_a
        "#{alpha_r[row]}#{col + 1}"
    end

    # Creates table of output locations in 96-well format
    #
    # @param outname [String] output name
    # @param ops [OperationList] operations
    # @param stamp_columns [String] make all 8 reactions in a column the same
    # @return [Array] 2D Array containing locations to be used in show block
    def display_plate(outname, ops, stamp_columns=false)
        plate = Array.new(8) { Array.new(12, "-") }
        if stamp_columns
            ops.each do |op|
                col = op.output(outname).column
                background = BACKGROUND_COLORS[col]
                content = "#{("A".ord.to_i).chr}#{col+1}"
                plate[0][col] = {content: content, style: {background: background} }
                (1..stamp_columns - 1).each do |row|
                    plate[row][col] = { content: " ", style: { background: background } }
                end
            end
        else
            ops.each do |op|
                row = op.output(outname).row
                col = op.output(outname).column
                plate[row][col] = {content: "#{(row + "A".ord.to_i).chr}#{col+1}", style: {background: BACKGROUND_COLORS[0] }  }
            end
        end

        return plate
    end

end

library: {name: CollectionDisplay, category: Tissue Culture Libs}
code_source:
module CollectionDisplay
  def create_collection_table(collection)
    size = collection.object_type.rows * collection.object_type.columns
    slots = (1..size).to_a
    slots.each_slice(collection.object_type.columns).map do |row|
      row.map do |col|
        {content: col, class: 'td-empty-slot'}
      end
    end
  end

  def highlight tbl, row, col, id
    tbl[row][col] = {content: id, class: 'td-filled-slot', check: true}
  end

  # [r,c,x] list
  def highlight_rcx(collection, rcx_list)
    tbl = create_collection_table collection
    rcx_list.each do |r, c, x|
      highlight tbl, r, c, x
    end
    tbl
  end

  def highlight_rc collection, rc_list, &rc_block
    rcx_list = rc_list.map { |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, ""]
    }
    highlight_rcx collection, rcx_list
  end

  def highlight_non_empty(collection, &rc_block)
    highlight_rc collection, collection.get_non_empty, &rc_block
  end

  def highlight_collection ops, id_block=nil, &fv_block
    g = ops.group_by { |op| fv_block.call(op).collection }
    tables = g.map do |collection, grouped_ops|
      rcx_list = grouped_ops.map do |op|
        fv = fv_block.call(op)
        id = id_block.call(op) if id_block
        id ||= fv.sample.id
        [fv.row, fv.column, id]
      end
      tbl = highlight_rcx collection, rcx_list
      [collection, tbl]
    end
    tables
  end

  def r_c_to_slot collection, r, c
    rows, cols = collection.dimensions = collection.object_type.rows
    r*cols + c+1
  end
  
  
  
  
  def create_alpha_numeric_table(collection)
    size = collection.object_type.rows * collection.object_type.columns
    slots = (1..size).to_a
    alpha_r = ('A'..'H').to_a
    slots.each_slice(collection.object_type.columns).each_with_index.map do |row, r_idx|
      row.each_with_index.map do |col, c_idx|
        {content: "#{alpha_r[r_idx]}#{c_idx + 1}", class: 'td-empty-slot'}
      end
    end
  end
  
  def highlight_alpha_rc collection, rc_list, &rc_block
    rcx_list = rc_list.map { |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, ""]
    }
    highlight_alpha_rcx(collection, rcx_list)
  end
  
  def highlight_alpha_rcx(collection, rcx_list)
     tbl = create_alpha_numeric_table(collection)
     rcx_list.each do |r, c, x|
         highlight tbl, r, c, x
     end
     return tbl
  end

    def highlight_alpha_non_empty collection, &rc_block
        highlight_alpha_rc collection, collection.get_non_empty, &rc_block
    end
      
end

library: {name: YeastDisplayHelper, category: Yeast Display}
code_source:
needs 'Standard Libs/CommonInputOutputNames'
needs "Standard Libs/Units"
needs "Standard Libs/TemporaryTubeLabels"
needs "Yeast Display/YeastDisplayShows"

module YeastDisplayHelper

    include CommonInputOutputNames, Units, TemporaryTubeLabels
    include YeastDisplayShows

    ADD_WASH_BUFFER = "Add %{qty} %{units} of chilled quench buffer to each tube according to the table."
    VORTEX_CELLS = 'After adding buffer, vortex each tube for 3 pulses.'
    SPIN_CELLS = 'Spin 1 min at 5000 x g in a 4 °C microcentrifuge.'
    REMOVE_BUFFER = 'Aspirate off the buffer without disturbing the cell pellet.'
    LABEL_TUBES_FROM_TABLE = 'Label the tubes and add the reagent volumes as indicated'

    ROOM_TEMP = { style: 'bg-color: lightorange', temp: 'AT ROOM TEMPERATURE' }
    ON_ICE = { style: 'bg-color: powderblue', temp: 'ON ICE' }

    INCUBATOR = "30 °C shaker incubator"

    def prepare_media_and_dilute(container, container_group, protocol=:yeast_display)
        container_group.extend(OperationList)

        language = container_specific_language(protocol, container)

        if container == "Labeled Yeast Library Suspension"
            get_media(container_group)
        else
            prepare_media(container_group, language)
        end

        innoculate_flasks(container_group, language)
    end

    def group_ops_by_container
        ops_by_container = operations.group_by { |op| container_name(op) }
        ops_by_container.each_value { |ops_group| ops_group.extend(OperationList) }
        ops_by_container
    end

    def container_name(op, handle=INPUT_YEAST)
        op.input(handle).object_type.name
    end

    def media_volume(op, handle=INPUT_YEAST)
        op.input(handle).item.associations[:media_vol]
    end

    def transfer_volume(op, handle=INPUT_YEAST)
        op.input(handle).item.associations[:txfr_vol]
    end

    def temp_instructions(substitutions)
        "<span style=\"%{style}\">KEEP TUBES AND BUFFERS <b>%{temp}</b></span>" % substitutions
    end

    def materials_prep_temp(substitutions)
        "<span style=\"%{style}\">These materials should be placed <b>%{temp}</b></span>" % substitutions
    end

    def set_unique_items(handle)
        donor = operations.first.input(handle)
        operations.each { |op| op.input(handle).set( { item: donor.item }) }
    end

    def container_specific_language(protocol, container)
        case protocol

        when :yeast_display
            yeast_display_containers(container)

        when :library_transformation
            library_transformation_containers(container)

        else
            raise "Unrecognized Protocol: #{protocol}."

        end
    end

    def yeast_display_containers(container)
        case container

        when "Yeast Library Glycerol Stock"
            {
                flask_type: '250 ml baffled flask',
                media_volume: '50 ml',
                passage_amount: 'Pipette the entire glycerol stock of each input %{input_type} into the corresponding flask.'
            }

        when "Labeled Yeast Library Suspension"
            {
                flask_type: '15 ml culture tube',
                media_volume: '5 ml',
                passage_amount: 'Using a new 5 ml serological pipette for each sample, pipette %{media_volume} of media into each collection tube, pipette up and down a few times, then transfer to the corresponding culture tube.'
            }

        when "Yeast Library Liquid Culture", "Yeast 5ml culture", "Yeast 50ml culture"
            {
                flask_type: '250 ml baffled flask',
                media_volume: '50 ml',
                passage_amount: 'Pipette 1 ml of each input %{input_type} into the corresponding flask.'
            }

        when "Yeast Plate", "Divided Yeast Plate"
            {
                flask_type: '15 ml culture tube',
                media_volume: '5 ml',
                passage_amount: 'Pick 1 colony of each input %{input_type} into the corresponding flask.'
            }

        else
            raise "Unrecognized Container for Item in #{container}"

        end
    end

    def library_transformation_containers(container)
        case container

        when "Yeast Plate", "Divided Yeast Plate"
            {
                flask_type: '250 ml baffled flask',
                media_volume: '50 ml',
                passage_amount: 'Pick 1 colony of each input %{input_type} into the corresponding flask.'
            }

        when 'Yeast 50ml culture'
            {
                flask_type: '500 mL baffled flask',
                media_volume: 'the indicated amount',
                passage_amount: 'Pipette the indicated volume of each input %{input_type} into the corresponding flask.'
            }

        when '8 ml High Efficiency Transformation'
            {
                flask_type: '500 ml baffled flask',
                media_volume: '92 ml',
                passage_amount: 'Pipette the entire 8 ml of each input %{input_type} into the corresponding flask.'
            }

        else
            raise "Unrecognized Container for Item in #{container}"

        end
    end

    def mark_cultures_for_discard(culture_items)
        culture_items.each { |item| item.move_to('Culture discard area') }

        ids = culture_items.map { |item| item.to_s }
        discard_date = (Date.today + 2).strftime("%-m/%-d/%y")

        show do
            title "Label cultures with discard date"

            note "Label each of the cultures #{ids.to_sentence} with \"DISCARD ON #{discard_date}\""
        end
    end

    def return_to_incubator
        operations.each { |op| op.output(OUTPUT_YEAST).item.update_attributes(location: INCUBATOR) }
    end

    # Generates table for adding quench buffer to samples.
    #
    # @param ops [OperationList] usually a subset of the operations
    # def quench_buffer_table(ops, output_handle)
    #     ops.start_table
    #         .custom_column(heading: "Yeast library") { |op| library_tube_label(op, output_handle) }
    #         .custom_column(heading: "Buffer") { |op| quench_buffer(op)[:label] }
    #         .end_table
    # end

    # Generates a table for adding wash buffer to the samples.
    #
    def wash_buffer_table(ops, args)
        ops.start_table
            .custom_column(heading: "Sample") { |op| sample_tube_label(op, args[:output_handle]) }
            .custom_column(heading: "Wash Buffer") { |op| op.input(args[:buffer_handle]).sample.name }
            .end_table
    end

    # Retrieve the antibody and dilute it to the appropriate concentration.
    #
    def prepare_reagent(args)
        reagent_name = args[:reagent_name]
        reagent_handle = args[:reagent_handle]
        buffer_handle = args[:buffer_handle]
        stock_per_rxn = args[:stock_per_rxn]
        buffer_per_rxn = args[:buffer_per_rxn]
        temperature = args[:temp] || ON_ICE

        set_unique_items(reagent_handle) if args[:debug]

        operations.retrieve(only: reagent_handle)

        operations.each do |op|
            op.temporary[:modified_buffer] = reagent_label(op, reagent_handle, buffer_handle)
        end

        ops_by_combo = operations.group_by { |op| op.temporary[:modified_buffer] }

        # h1 = "#{reagent_name.sub(/^./, &:upcase)} volume (#{MICROLITERS})"
        # h2 = "Buffer"
        # h3 = "Buffer volume (#{MICROLITERS})"
        # h4 = "Tube label"

        reagent_table = [[
            "#{reagent_name.sub(/^./, &:upcase)}",
            "Volume (#{MICROLITERS})",
            "Buffer",
            "Volume (#{MICROLITERS})",
            "Tube label"
        ]]

        ops_by_combo.each do |combo, ops|
            op = ops[0]
            row = [
                op.input(reagent_handle).item.to_s,
                { content: total_vol(stock_per_rxn, ops.length), check: true },
                op.input(buffer_handle).sample.name,
                { content: total_vol(buffer_per_rxn, ops.length), check: true },
                op.temporary[:modified_buffer]
            ]
            reagent_table.append(row)
        end

        show do
            # TODO Need to calculate the volume for volumes over 1000 ul
            title "Prepare #{reagent_name} dilutions"
            note temp_instructions(temperature)

            note "Dilute the #{ops_by_combo.length > 1 ? reagent_name.pluralize : reagent_name} with buffer according to the table"
            note "Label the tube(s) according to the table"
            table reagent_table
        end

        uniq_items = operations.map { |op| op.input(reagent_handle).item }.uniq
        release(uniq_items, interactive: true)
    end

    def total_vol(vol_per_rxn, n_rxns)
        (vol_per_rxn[:qty] * n_rxns).round
    end

    def reagent_label(op, reagent_handle, buffer_handle)
        reagent_name = op.input(reagent_handle).try(:sample).try(:name) || "unknown"
        buffer_name = op.input(buffer_handle).try(:sample).try(:name) || "unknown"
        "#{reagent_name} in #{buffer_name}"
    end

    def add_input_from_item(op, name, item)
        ft = FieldType.new(
            name: name,
            ftype: "sample",
            parent_class: "OperationType",
            parent_id: nil
        )
        ft.save

        fv = FieldValue.new(
            name: name,
            child_item_id: item.id,
            child_sample_id: item.sample.id,
            role: 'input',
            parent_class: "Operation",
            parent_id: op.id,
            field_type_id: ft.id
        )
        fv.save
    end

    ########## DEBUG METHODS ##########

    def set_test_labels(items)
        items.each_with_index do |item, i|
            item.associate(:sample_tube_label, "S#{i+1}")
        end
    end

    def set_test_ods(items=[])
        items = operations.map { |op| op.input(INPUT_YEAST).item } unless items.present?
        items.uniq.each { |item| item.associate(:od, (2.0 + 3*Random.rand) / 10) }
    end

end

library: {name: YeastDisplayShows, category: Yeast Display}
code_source:
needs 'Standard Libs/CommonInputOutputNames'

module YeastDisplayShows
    
    include CommonInputOutputNames

    def prepare_media(container_group, language)
        flask_type = language[:flask_type]
        media_volume = language[:media_volume]
        
        flask_type = flask_type.pluralize if container_group.length > 1
        
        show do
          title "Prepare media"
          warning "Work in the media bay for media preparation."
          check "Grab #{container_group.length} #{flask_type}."
          
          out_ids = container_group.map { |op| op.output(OUTPUT_YEAST).item.id }.join(", ")
          check "Label each flask or tube with the following ids: #{out_ids}"
          
          note "Add #{media_volume} of the following media into the #{flask_type}."
          
          table media_table(container_group)
        end
    end
  
    def innoculate_flasks(container_group, language)
        passage_amount = language[:passage_amount]
        
        input_type = operations.first.input(INPUT_YEAST).name
        plural_input_type = operations.length > 1 ? input_type.pluralize : input_type
        language = language.merge({ input_type: input_type })
        
        show do
          title "Inoculate #{plural_input_type}"
      
          note passage_amount % language
          table transfer_table(container_group)
        end
    end
    
    def media_table(container_group)
        this_table = container_group.start_table
        this_table = this_table.custom_column(heading: 'Media') { |op| op.input("Media").sample.name }
        
        if container_group.all? { |op| media_volume(op) }
            this_table = this_table.custom_column(heading: 'Volume (ml)') { |op| media_volume(op).round }
        end
        
        this_table.output_item(OUTPUT_YEAST, checkable: true).end_table
    end
    
    def get_media(container_group)
        media = container_group.map { |op| op.input("Media").sample.name }.first
        
        show do
            title "Get media"
            
            check "Get a bottle of #{media}."
        end
    end
    
    def transfer_table(container_group)
        this_table = container_group.start_table.input_item(INPUT_YEAST)
        
        if container_group.any? { |op| sample_tube_label(op.input(INPUT_YEAST).item) }
            this_table = this_table.custom_column(heading: 'Tube label') { |op| sample_tube_label(op.input(INPUT_YEAST).item) }
        end
        
        if container_group.all? { |op| transfer_volume(op) }
            this_table = this_table.custom_column(heading: 'Volume (ml)') { |op| transfer_volume(op).round(1) }
        end
        
        this_table.output_item(OUTPUT_YEAST, checkable: true).end_table
    end
    
    def measure_culture_ods(ops)
        show do
            title 'Measure library culture densities.'
            
            note 'Use the Nanodrop to measure the density of each yeast culture, and record the OD600.'
            warning 'Record the OD600 exactly as it is shown on the screen.'
            
            table ops.start_table
                .input_item(INPUT_YEAST)
                .get(:od, type: 'number', heading: 'OD600')
                .end_table
        end
    end
  
end
